MATLABInstrumentDriver
FileVersion: 2.42
DriverName: picotech_ps6000_generic.mdd
DriverType: MATLAB generic
InstrumentType: Oscilloscope
InstrumentManufacturer: Pico Technology Ltd.
InstrumentModel: PicoScope 6000 Series
InstrumentVersion: 1.2.20

CreateInitCode
  Code:
    function init(obj)
    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
    % Copyright © 2014 - 2017. Pico Technology Ltd. All rights reserved.
    % You may copy and distribute this file as long as it remains unmodified.
    % SB

        fprintf('\nCopyright © 2014 - 2017 Pico Technology Ltd. All rights reserved.\n');
        fprintf('\n');
        fprintf('PicoScope 6000 Series MATLAB Instrument Driver\n');
        fprintf('\n');

        % Only load library once
        if (libisloaded('ps6000'))

            % Do nothing

        else

            if (ismac())

                [ps6000NotFound, ps6000Warnings] = loadlibrary('libps6000.dylib', @ps6000MFile, 'alias', 'ps6000');

            elseif (isunix())

                [ps6000NotFound, ps6000Warnings] = loadlibrary('libps6000.so', @ps6000MFile, 'alias', 'ps6000');

            elseif (ispc())

                [ps6000NotFound, ps6000Warnings] = loadlibrary('ps6000.dll', @ps6000MFile);

            else

                % Do nothing

            end

        end

        % Only load library once
        if (libisloaded('ps6000Wrap'))

            % Do nothing

        else

            if (ismac())

                [ps6000NotFound, ps6000Warnings] = loadlibrary('libps6000Wrap.dylib', @ps6000WrapMFile, 'alias', 'ps6000Wrap');

            elseif (isunix())

                [ps6000NotFound, ps6000Warnings] = loadlibrary('libps6000Wrap.so', @ps6000WrapMFile, 'alias', 'ps6000Wrap');

            elseif (ispc())

                [ps6000NotFound, ps6000Warnings] = loadlibrary('ps6000Wrap.dll', @ps6000WrapMFile);

            else

                % Do nothing

            end
        end

        % Confirm data files have been loaded
        if (exist('PicoConstants.m', 'file') == 0)

            error('File PicoConstants.m not found - please ensure that the location of this file is added to the MATLAB Path.')

        end

        if (exist('PS6000Constants.m', 'file') == 0)

            error('File PS6000Constants.m not found - please ensure that the location of this file is added to the MATLAB Path.')

        end

        if(isstruct(evalin('base', 'ps6000Enuminfo')) && isstruct(evalin('base', 'ps6000Structs')))

            % Do nothing - structures have been loaded

        else

            error('Failed to load enumerations and/or structures from ps6000MFile');

        end

        % Enumerate units - only displayed if driver is being used via command
        % line

        count = int16(0);
        serials = blanks(100);
        serialLth = int16(length(serials));

        [status, count, serials, serialLth] = calllib('ps6000', ...
            'ps6000EnumerateUnits',  count, serials, serialLth);

        if (status == PicoStatus.PICO_OK)

            fprintf('Number of units found: %d\n\nSerial number(s): %s\n\n', count, serials);

        elseif (status == PicoStatus.PICO_NOT_FOUND)

            warning('PS6000IDCreate:PicoNotFound', 'No units found.');

        else

            error('PS6000IDCreate:ErrorCode', 'Status code: %d\n', status);

        end

        % Initialise properties
        obj.DriverData.displayOutput = obj.displayOutput;
        obj.DriverData.constants.PS6000_MAX_UNITS = 64;

ConnectInitCode
  Code:
    function init(obj)
    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
    % Copyright © 2014 - 2017 Pico Technology Ltd. All rights reserved.
    % You may copy and distribute this file as long as it remains unmodified.

        disp('Opening PicoScope 6000 Series device...');

        % Structure to hold status values while connecting to the device.
        % Only output when the driver is called using command line or script.
        connectStatus = [];

        % Temporary variable to store handle value
        unitHandle = 0;

        % PICO_OK status value (0)
        picoOK = PicoStatus.PICO_OK;

        % Obtain the serial input
        serialNum = get(obj, 'RsrcName');

        % Determine if serial number is specified or null
        if (~isempty(serialNum))

            unitSerial = serialNum;

        else

            unitSerial = [];

        end

        % Open the unit
        [connectStatus.openUnit, unitHandle, obj.UserData.unitSerial] = ...
            calllib('ps6000', 'ps6000OpenUnit', unitHandle, unitSerial);

         obj.DriverData.unitHandle = unitHandle;

        % Initial channel settings to assist with change in power source
        % Setup initial channel settings (4 x 4)
        % 4 channels consisting of enabled, coupling, range, analogue offset
        % Default will be set later via resetDevice

        obj.DriverData.channelSettings = zeros(PicoConstants.QUAD_SCOPE, 4);

        % Set handle and serial
        % Unit connected if 0 or power supply not connected
        if (connectStatus.openUnit == picoOK)

            % Display object information
            obj

            unitHandle = obj.DriverData.unitHandle;

            infoLine = blanks(15);
            reqSize = 15;

            [connectStatus.unit_serial, unitSerial, reqSize]  = calllib('ps6000', ...
                    'ps6000GetUnitInfo', unitHandle, infoLine, ...
                    length(infoLine), reqSize, PicoStatus.PICO_BATCH_AND_SERIAL);

            obj.DriverData.unitSerial = unitSerial;

            % Set variant and channel count information

            infoLineV = blanks(15);
            reqSizeV = 15;

            [connectStatus.unit_variant, variant, reqSizeV]  = calllib('ps6000', ...
                    'ps6000GetUnitInfo', unitHandle, infoLineV, ...
                    length(infoLineV), reqSizeV, PicoStatus.PICO_VARIANT_INFO);

            set(obj, 'InstrumentModel', variant);

            % Set device parameters
            invoke(obj, 'resetDevice');

            % Display unit information to user if not using TMTool
            fprintf('\n');
            fprintf('Connected to PicoScope 6000 Series device:-\n\n');
            fprintf('      Instrument Model: %s\n', get(obj, 'InstrumentModel'));
            fprintf('   Batch/Serial Number: %s\n', unitSerial);
            fprintf('     Analogue Channels: %d\n', get(obj, 'channelCount'));

            %digital_ports = get(obj, 'digitalPorts');

            %if(digital_ports > 0)

            %    fprintf('     Digital Channels: %d\n', digital_ports * 8);

            %end

            % Bandwidth information
            bandwidthHz = get(obj, 'bandwidth');

            if (bandwidthHz > 0 && bandwidthHz < 1e9)

               fprintf('             Bandwidth: %d MHz\n', (bandwidthHz/1e6));

            elseif (bandwidthHz >= 1e9)

               fprintf('             Bandwidth: %d GHz\n', (bandwidthHz/1e9));

            else

                % Do nothing

            end

            fprintf('         Buffer memory: %d MS\n', get(obj, 'bufferMemory')/pow2(20));

            % Sampling rate information
            maxSamplingRate = get(obj, 'maxSamplingRate');

            if (maxSamplingRate > 0 && maxSamplingRate < 1e9)

                fprintf(' Maximum sampling rate: %d MS/s\n', maxSamplingRate/1e6);

            elseif (maxSamplingRate >= 1e9)

                fprintf(' Maximum sampling rate: %d GS/s\n', maxSamplingRate/1e9);

            else

                % Do nothing

            end

            clear bandwidthHZ;
            clear maxSamplingRate;

            % Output the signal generator type
            sigGenType = 'None';

            switch (obj.DriverData.sigGenType)

                case PicoConstants.SIG_GEN_FUNCT_GEN

                    sigGenType = 'Function Generator';

                case PicoConstants.SIG_GEN_AWG

                    sigGenType = 'Arbitrary Waveform Generator';

                otherwise

                    % Already set to none

            end

            fprintf(' Signal Generator Type: %s\n', sigGenType);

            fprintf('\n');

        elseif(connectStatus.openUnit == PicoStatus.PICO_NOT_FOUND)

            error('No unit found, please check connections.');

        else

            error('Status code: %d\n', connectStatus.openUnit);

        end

CleanupCode
  Code:
    function cleanup(obj)
    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
        if(isfield(obj.DriverData,'unitHandle'))

            unitHandle = obj.DriverData.unitHandle;

            if (isempty(unitHandle))
                % If no unithandle, return without doing anything
                return;
            end

            if (isempty(obj.DriverData.unitSerial))

                unitSerial = '';

            else

                unitSerial = obj.DriverData.unitSerial;

            end

            if(~libisloaded('ps6000') && ~libisloaded('ps6000Wrap'))

                % If the drivers are no longer loaded, return without doing
                % anything
                return;

            end

            % Disconnect Code:

            disconnectStatus = calllib('ps6000', 'ps6000CloseUnit', unitHandle);

            if (disconnectStatus == PicoStatus.PICO_OK)

                if (unitHandle > 0)

                    fprintf(['Connection to PicoScope %s with serial number %s ' ...
                        'closed successfully.\n'], obj.InstrumentModel, unitSerial);

                end

            elseif (disconnectStatus == PicoStatus.PICO_INVALID_HANDLE)

                % No device with the handle, so should be disconnected.
                return;

            else

                if (isfield(obj.DriverData, 'unitSerial'))

                    error('Disconnect:ConnectionNotClosed',['Connection to PicoScope %s with serial number %s ' ...
                        'not closed. Status code %d\n'], ...
                        obj.InstrumentModel, obj.DriverData.unitSerial, disconnectStatus);

                end

            end

            % Only unload libraries if there are no more connected
            % oscilloscopes

            % Find the first handle number for the platform
            firstHandle = 0;

            if (ispc())

                firstHandle = 16384; % Windows PC

            else

                firstHandle = 1; % Mac OS X and Linux

            end

            % Test the connection to a range of handle values up to a maximum
            % Max number of units should be 64.
            lastHandle = firstHandle + obj.DriverData.constants.PS6000_MAX_UNITS - 1;

            % Create an array to store status values for ping tests.
            % On Windows PCs, the first handle is 16384 so this will need to be
            % accounted for.
            if (ispc())

                pingStatus = zeros(lastHandle, 1);

            else

                pingStatus = zeros(obj.DriverData.constants.PS6000_MAX_UNITS, 1);

            end

            % Test the handle value ranges
            for h = firstHandle:lastHandle

                pingStatus(h, 1) = calllib('ps6000', 'ps6000PingUnit', h);

            end

            if (ispc())

                % Need to resize arrray as first handle is not 0
                pingStatus(1:firstHandle - 1) = [];

            end

            if (any(pingStatus == PicoStatus.PICO_OK))

              % Device still connected
              disp('Other PicoScope 6000 Series devices are still connected - libraries will not be unloaded.');

            else

                unloadlibrary('ps6000Wrap');
                unloadlibrary('ps6000');

                if (~libisloaded('ps6000') && ~libisloaded('ps6000Wrap'))

                    disp('Libraries unloaded successfully.');

                else

                    error('Libraries not unloaded successfully.');

                end

            end

        else

            warning('Disconnect:NoDevicesFound', 'Disconnect: No devices found.');

        end

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property bandwidth
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
          % If bandwidth doesn't exist, create it.
          if ( ~isfield(obj.DriverData, 'bandwidth') )
              obj.DriverData.bandwidth = 0;
          end

          propertyValue = obj.DriverData.bandwidth;
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: bandwidth represents the maximum bandwidth (3dB cut-off point) of the oscilloscope in Hertz.

  Property bufferMemory
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
          % If bufferMemory doesn't exist, create it.
          if ( ~isfield(obj.DriverData, 'bufferMemory') )
              obj.DriverData.bufferMemory = 0;
          else
              propertyValue = obj.DriverData.bufferMemory;
          end
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    PermissibleType: Double none
    DefaultValue: 268435456
    ReadOnly: always
    Description: Defines the size of the memory buffer on the device (in samples).

  Property channelCount
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
          % If channelCount doesn't exist, create it.
          if ( ~isfield(obj.DriverData, 'channelCount') )
              obj.DriverData.channelCount = [ ];
          end

          propertyValue = obj.DriverData.channelCount;
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    PermissibleType: Double none
    DefaultValue: 8
    ReadOnly: always
    Description: The number of analogue input channels on the device.

  Property channelSettings
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
          % If channelSettings doesn't exist, create it.
          if ( ~isfield(obj.DriverData, 'channelSettings') )

              obj.DriverData.channelSettings = [ ];

          end

          propertyValue = obj.DriverData.channelSettings;
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    PermissibleType: Object none
    ReadOnly: always
    Description: A matrix containing the channel settings for analogue channels.

      This will consist of a 4 x 5 matrix.

      The row number will correspond to the channel:

      1 - Channel A
      2 - Channel B
      3 - Channel C
      4 - Channel D

      Each row will contain the following elements corresponding to:

      enabled - set to 0 (off) or 1 (on).
      dc - set DC (50 ohm or 1 megaohm)/AC coupling. 
      range - an enumeration representing the voltage range.
      analogueOffset - the offset on the channel.
      bandwidth - an enumeration representing the bandwidth (20 MHz (6402/6403), 25Mhz (6404) or full specified bandwidth)

  Property displayOutput
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
          propertyValue = obj.DriverData.displayOutput;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
          obj.DriverData.displayOutput = propertyValue;
    PermissibleType: Double enum [0.0, 1.0]
    DefaultValue: 1
    ReadOnly: never
    Description: Enumeration value to select whether to display output from function calls in the MATLAB Command Window.

      Set to 1 to display output, 0 to hide output.

      Note: Output will still be sent to the Command Window when calling the icdevice, connect and disconnect functions. Warning and error messages will still continue to be displayed from function calls.

  Property firstRange
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
          % If firstRange doesn't exist, create it.
          if ( ~isfield(obj.DriverData, 'firstRange') )
              obj.DriverData.firstRange = [ ];
          else
              propertyValue = obj.DriverData.firstRange;
          end
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    PermissibleType: Double enum [0.0, 1.0, 2.0, 3.0, 4.0, 5.0, 6.0, 7.0, 8.0, 9.0, 10.0, 11.0]
    DefaultValue: 2
    ReadOnly: always
    Description: Enumeration corresponding to the lowest voltage range supported by the device.

  Property hasHardwareEts
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
          % If hasHardwareEts doesn't exist, create it.
          if ( ~isfield(obj.DriverData, 'hasHardwareEts') )
              obj.DriverData.hasHardwareEts = [ ];
          end

          propertyValue = obj.DriverData.hasHardwareEts;
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    PermissibleType: Double enum [0.0, 1.0]
    DefaultValue: 0.0
    ReadOnly: always
    Description: Indicates if the device has hardware-based Equivalent Time Sampling.

  Property lastRange
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
          % If lastRange doesn't exist, create it.
          if ( ~isfield(obj.DriverData, 'lastRange') )
              obj.DriverData.lastRange = [ ];
          end

          propertyValue = obj.DriverData.lastRange;
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    PermissibleType: Double enum [0.0, 1.0, 2.0, 3.0, 4.0, 5.0, 6.0, 7.0, 8.0, 9.0, 10.0, 11.0]
    DefaultValue: 10
    ReadOnly: always
    Description: Enumeration corresponding to highest voltage range supported by device.

  Property maxADCValue
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
          % If maxADCValue doesn't exist, create it.
          if ( ~isfield(obj.DriverData, 'maxADCValue') )
              obj.DriverData.maxADCValue = 0;
          end

          propertyValue = obj.DriverData.maxADCValue;
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    PermissibleType: Double none
    DefaultValue: 32512
    ReadOnly: always
    Description: The maximum ADC count value for the device.

  Property maxAuxInValue
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
          % If maxAuxInValue doesn't exist, create it.
          if ( ~isfield(obj.DriverData, 'maxAuxInValue') )
              obj.DriverData.maxAuxInValue = 0;
          end

          propertyValue = obj.DriverData.maxAuxInValue;
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    PermissibleType: Double none
    DefaultValue: 32512
    ReadOnly: never
    Description: The maximum count value for AUX IN input on the device.

  Property maxSamplingRate
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
          % If maxSamplingRate doesn't exist, create it.
          if ( ~isfield(obj.DriverData, 'maxSamplingRate') )
              obj.DriverData.maxSamplingRate = [ ];
          end

          propertyValue = obj.DriverData.maxSamplingRate;
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: The maximum single shot sampling rate for the device (samples per second).

  Property minADCValue
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
          % If minADCValue doesn't exist, create it.
          if ( ~isfield(obj.DriverData, 'minADCValue') )
              obj.DriverData.minADCValue = 0;
          end

          propertyValue = obj.DriverData.minADCValue;
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    PermissibleType: Double none
    DefaultValue: -32512
    ReadOnly: always
    Description: The minimum ADC count value for the device.

  Property numPostTriggerSamples
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
          % If numPostTriggerSamples doesn't exist, create it.
          if ( ~isfield(obj.DriverData, 'numPostTriggerSamples') )
              obj.DriverData.numPostTriggerSamples = [ ];
          end

          propertyValue = obj.DriverData.numPostTriggerSamples;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
          obj.DriverData.numPostTriggerSamples = propertyValue;
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: The number of samples to be taken after a trigger event.

      If no trigger event has been set then this specifies the maximum number of samples to be taken. If a trigger
      condition has been set, this specifies the number of samples to be taken after a trigger has fired, and the number of samples to be
      collected is then: -

      noOfPreTriggerSamples + noOfPostTriggerSamples

      When used in Streaming mode, this is the maximum number of raw samples after a trigger event for each enabled channel.

  Property numPreTriggerSamples
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
          % If numPreTriggerSamples doesn't exist, create it.
          if ( ~isfield(obj.DriverData, 'numPreTriggerSamples') )
              obj.DriverData.numPreTriggerSamples = [ ];
          end

          propertyValue = obj.DriverData.numPreTriggerSamples;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
          obj.DriverData.numPreTriggerSamples = propertyValue;
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: The number of samples to return before the trigger event.

      If no trigger has been set then this argument is ignored and noOfPostTriggerSamples specifies the maximum number of samples to collect.

      When used in Streaming mode, this is the maximum number of raw samples before the trigger event for each enabled channel.

  Property timebase
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
          % If timebase doesn't exist, create it.
          if ( ~isfield(obj.DriverData, 'timebase') )
              obj.DriverData.timebase = 1;
          else
              propertyValue = obj.DriverData.timebase;
          end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
          obj.DriverData.timebase = propertyValue;
    PermissibleType: Double none
    DefaultValue: 79
    ReadOnly: never
    Description: The timebase used for the scope when capturing data in Block and Rapid Block mode - please refer to the Programmer's Guide for the formulae to calculate the timebase index based on the interval.

  Property unitHandle
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
          % If DriverData.unitHandle doesn't exist, create it.
          if ( ~isfield(obj.DriverData, 'unitHandle') )
              obj.DriverData.unitHandle = 0;
          else
              propertyValue = obj.DriverData.unitHandle;
          end
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: The handle assigned by the underlying driver for the device.

  Property unitSerial
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
          % If DriverData.unitSerial doesn't exist, create it.
          if ( ~isfield(obj.DriverData, 'unitSerial') )
              obj.DriverData.unitSerial = [ ];
          else
              propertyValue = obj.DriverData.unitSerial;
          end
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    PermissibleType: String none
    ReadOnly: always
    Description: The device batch/serial number.

  Method getUnitInfo
    MCode:
      function [status, unitInfoValues] = getUnitInfo(obj)
      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
          unitHandle = obj.DriverData.unitHandle;

          unitInfoDesc = {'Driver version: '; 'USB version: '; 'Hardware version: '; 'Variant: '; ...
              'Batch & Serial: '; 'Cal. Date: '; 'Kernel version: '; 'Digital HW version: '; ...
              'Analogue HW version: '; 'Firmware 1: '; 'Firmware 2: '};

          infoLine = blanks(40);

          unitInfoValues = cell(11,1);

          reqSize = 40;

          status = zeros(11,1,'uint32');

          % Loop through and put together information
          for n = 1:11

              [status(n,1), infoLine1, reqSize]  = calllib('ps6000', ...
                  'ps6000GetUnitInfo', unitHandle, infoLine, ...
                  length(infoLine), reqSize,(n-1));

              if(status(n,1) ~= PicoStatus.PICO_OK)

                  % TBD - Error handling

              end

              unitInfoLine = strcat(unitInfoDesc(n), infoLine1);
              unitInfoValues(n) = cellstr(unitInfoLine);

          end
    Description: GetUnitInfo(obj) retrieves information about the specified oscilloscope for the following types of information:

      1.   Driver version
      2.   USB version
      3.   Hardware version
      4.   Variant number
      5.   Batch & Serial number
      6.   Calibration date
      7.   Kernel Version
      8.   Digital Hardware version
      9.   Analog Hardware version
      10. Firmware 1
      11. Firmware 2

      Input parameters:

      obj - the object representing the device.

      Output parameters:

      status - an array containing the status codes returned by the driver on each call to the underlying ps6000GetUnitInfo function.
      unitInfoValues - a set of text providing information on the device connected to.

      For further information on the underlying ps6000GetUnitInfo function please refer to the PicoScope 6000 Series PC Oscilloscopes Programmer's Guide.

  Method ps6000FlashLed
    MCode:
      function status = ps6000FlashLed(obj, start)
      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
          status = calllib('ps6000', 'ps6000FlashLed', ...
              obj.DriverData.unitHandle, start);

      	if(status ~= PicoStatus.PICO_OK)

              error('ps6000FlashLed: Error code %d\n', status);

          end
    Description: ps6000FlashLed(obj, start) flashes the LED on the front of the scope without blocking the calling thread.

      This function may be used with the Test and Measurement Tool.

      Input parameters:

      obj - the object representing the device.
      start - the action required:

      	< 0 : flash the LED indefinitely.
      	0 : stop the LED flashing.
      	> 0 : flash the LED start times.

      Output parameters:

      status - status code returned by the device.

      For further information on the ps6000FlashLed function please refer to the PicoScope 6000 Series PC Oscilloscopes Programmer's Guide.

  Method ps6000GetAnalogueOffset
    MCode:
      function [status, maximumVoltage, minimumVoltage] = ps6000GetAnalogueOffset(obj, range, coupling)
      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
          % Values to be used for pointers
          maxVoltage = 0.0;
          minVoltage = 0.0;

          [status, maximumVoltage, minimumVoltage] = calllib('ps6000', ...
              'ps6000GetAnalogueOffset', obj.DriverData.unitHandle, ...
              range, coupling, maxVoltage, minVoltage);

          clear maxVoltage;
          clear minVoltage;

          if(status ~= PicoStatus.PICO_OK)

              error('ps6000GetAnalogueOffset: error code %d\n', status);

          end
    Description: ps6000GetAnalogueOffset(obj, range, coupling) is used to get the maximum and minimum allowable analogue offset for a specific voltage range.

      This function may be used with the Test and Measurement Tool.

      Input parameters: 

      obj - the object representing the device.
      range - an enumeration representing the voltage range to be used.
      coupling - an enumeration representing the the type of AC/DC coupling used.

      Output parameters:

      status - status code returned by the driver.
      maximumVoltage - the maximum voltage allowed for the range.
      minimumVoltage - the minimum voltage allowed for the range.

      For further information on the ps6000GetAnalogueOffset function please refer to the PicoScope 6000 Series PC Oscilloscopes Programmer's Guide.

  Method ps6000GetMaxDownSampleRatio
    MCode:
      function [status, maxDownSampleRatio] = ps6000GetMaxDownSampleRatio(obj, numUnaggregatedSamples, downSampleRatioMode, segmentIndex)
      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
          % Value to which the max downsample ration is assigned
          maxDownSampleRatio = 0;

          [status, maxDownSampleRatio] = calllib('ps6000', ...
              'ps6000GetMaxDownSampleRatio', get(obj, 'unitHandle'), numUnaggregatedSamples, ...
                  maxDownSampleRatio, downSampleRatioMode, segmentIndex);

          if(status ~= PicoStatus.PICO_OK)

             error('ps6000GetMaxDownSampleRatio: error code %d\n', status);

          end
    Description: ps6000GetMaxDownSampleRatio(obj, numUnaggregatedSamples, downSampleRatioMode, segmentIndex) returns the maximum downsampling ratio that can be used for a given number of samples in a given downsampling mode.

      This function may be used with the Test and Measurement Tool.

      Input parameters:

      obj - the object representing the device.
      numUnaggregatedSamples - the number of unprocessed samples to be downsampled.
      downSampleRatioMode - the downsampling mode.
      segmentIndex - the memory segment where the data is stored.

      Output parameters:

      status - status code returned by the driver.
      maxDownSampleRatio - the maximum possible downsampling ratio.

      For further information on the ps6000GetMaxDownSampleRatio function please refer to the PicoScope 6000 Series PC Oscilloscopes Programmer's Guide.

  Method ps6000GetTimebase2
    MCode:
      function [status, timeIntervalNanoSeconds, maxSamples] = ps6000GetTimebase2(obj, timebase, segmentIndex)
      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
          timeIntervalNanoSeconds = 0;

          numSamples = obj.DriverData.numPreTriggerSamples + ...
              obj.DriverData.numPostTriggerSamples;

          maxSamples = 0; % Pass data to return the max samples from the driver

          [status, timeIntervalNanoSeconds, maxSamples] = calllib('ps6000', ...
              'ps6000GetTimebase2', obj.DriverData.unitHandle, timebase, numSamples, ...
              timeIntervalNanoSeconds,0, maxSamples, segmentIndex);

          if(status ~= PicoStatus.PICO_OK)

              error('ps6000GetTimebase2: error code %d\n', status);

          end

          clear numSamples;
    Description: ps6000GetTimebase2(obj, timebase, segmentIndex) discovers which timebases are available on the oscilloscope, returning the time interval as floating point values.

      The channels should be setup using the ps6000SetChannel function first.

      This function may be used with the Test and Measurement Tool.

      Input parameters:

      obj - the object representing the device.
      timebase: a timebase index.
      segmentIndex: the index of the memory segment to use.

      Output parameters:

      status - status code returned by the driver.
      timeIntervalNanoSeconds: the time interval between readings at the selected timebase.
      maxSamples: the maximum number of samples available. 

      For further information on the ps6000GetTimebase2 function please refer to the PicoScope 6000 Series PC Oscilloscopes Programmer's Guide.

  Method ps6000MemorySegments
    MCode:
      function [status, nMaxSamples] = ps6000MemorySegments(obj, nSegments)
      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
          nMaxSamples = 0; % Initialise value for pointer

          [status, nMaxSamples] = calllib('ps6000', 'ps6000MemorySegments', ...
              obj.DriverData.unitHandle, nSegments, nMaxSamples);

          if(status ~= PicoStatus.PICO_OK)

              error('ps6000MemorySegments: error code %d\n', status);

          end
    Description: ps6000MemorySegments(obj, nSegments) sets the number of memory segments that the scope will use.

      This function may be used with the Test and Measurement Tool.

      Input parameters:

      obj - the object representing the device.
      nSegments - the number of segments required from 1 to the number of maximum segments:

      		PicoScope 6402 : 32,768
      		PicoScope 6402A : 125,000
      		PicoScope 6402B : 250,000
      		PicoScope 6402C : 250,000
      		PicoScope 6402D : 500,000
      		PicoScope 6403 : 1,000,000
      		PicoScope 6403A : 250,000
      		PicoScope 6403B :500,000
      		PicoScope 6403C :500,000
      		PicoScope 6403D :1,000,000
      		PicoScope 6404 : 1,000,000
      		PicoScope 6404A : 500,000
      		PicoScope 6404B : 1,000,000
      		PicoScope 6404C : 1,000,000
      		PicoScope 6404D : 2,000,000
      		PicoScope 6407 : 1,000 

      Output parameters:

      status - status code returned by the driver.
      nMaxSamples - the number of samples available in each segment.

      For further information on the ps6000MemorySegments function please refer to the PicoScope 6000 Series PC Oscilloscopes Programmer's Guide.

  Method ps6000SetChannel
    MCode:
      function status = ps6000SetChannel(obj, channel, enabled, type, range, analogueOffset, bandwidth)
      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
          status = calllib('ps6000', 'ps6000SetChannel', ...
              obj.DriverData.unitHandle, channel, enabled, type, ...
              range, analogueOffset, bandwidth);

          % Obtain channel settings information
          chSettings = obj.DriverData.channelSettings;

      	if(status == PicoStatus.PICO_OK)

              switch(channel)

                  case evalin('base', 'ps6000Enuminfo.enPS6000Channel.PS6000_CHANNEL_A')

                      chSettings(1,1) = enabled;
                      chSettings(1,2) = type;
                      chSettings(1,3) = range;
                      chSettings(1,4) = analogueOffset;
                      chSettings(1,5) = bandwidth;

                  case evalin('base', 'ps6000Enuminfo.enPS6000Channel.PS6000_CHANNEL_B')

                      chSettings(2,1) = enabled;
                      chSettings(2,2) = type;
                      chSettings(2,3) = range;
                      chSettings(2,4) = analogueOffset;
                      chSettings(2,5) = bandwidth;

                  case evalin('base', 'ps6000Enuminfo.enPS6000Channel.PS6000_CHANNEL_C')

                      chSettings(3,1) = enabled;
                      chSettings(3,2) = type;
                      chSettings(3,3) = range;
                      chSettings(3,4) = analogueOffset;
                      chSettings(3,5) = bandwidth;

                  case evalin('base', 'ps6000Enuminfo.enPS6000Channel.PS6000_CHANNEL_D')

                      chSettings(4,1) = enabled;
                      chSettings(4,2) = type;
                      chSettings(4,3) = range;
                      chSettings(4,4) = analogueOffset;
                      chSettings(4,5) = bandwidth;

                  otherwise

                      % Do nothing

              end

              %obj.UserData.channelSettings
              obj.DriverData.channelSettings = chSettings;

              % Information to be passed to the wrapper dll
              enabledChannels = zeros(PicoConstants.QUAD_SCOPE, 1, 'int16');

              %disp('Setting channels')

              switch(obj.DriverData.channelCount)

                  case PicoConstants.DUAL_SCOPE

                      % Only channels A and B
                      enabledChannels = [chSettings(1,1); ...
                          chSettings(2,1); 0; 0; 0; 0; 0; 0];

                  case PicoConstants.QUAD_SCOPE

                      enabledChannels = [chSettings(1,1); ...
                          chSettings(2,1); ...
                          chSettings(3,1); ...
                          chSettings(4,1); ...
                          0; 0; 0; 0];

                  case PicoConstants.OCTO_SCOPE

                      enabledChannels = [chSettings(1,1); ...
                          chSettings(2,1); chSettings(3,1); ...
                          chSettings(4,1); chSettings(5,1); ...
                          chSettings(6,1); chSettings(7,1); ...
                          chSettings(8,1)];

                  otherwise

                      % Do nothing

              end

              calllib('ps6000Wrap', ...
                          'setEnabledChannels', obj.DriverData.unitHandle, ...
                          enabledChannels);

          else

              if(status == PicoStatus.PICO_INVALID_CHANNEL)

                  error('ps6000SetChannel: Invalid channel selected.');

              else

                  error('ps6000SetChannel: error code %d\n', status);

              end

          end
    Description: function status = ps6000SetChannel(obj, channel, enabled, type, range, analogueOffset, bandwidth) specifies whether an input channel is to be enabled, its input coupling type, voltage range, analog offset and bandwidth limit.

      This function may be used with the Test and Measurement Tool.

      Input parameters:

      obj - the object representing the device.
      channel - the channel to be configured (an enumeration from the PS6000_CHANNEL range - PS6000_CHANNEL_A to PS6000_CHANNEL_D).
      enabled - set to TRUE (1) to enable the channel, FALSE (0) otherwise.
      type - the impedance and coupling type (an enumeration from the PS6000_COUPLING range).
      range - the input voltage range (an enumeration from the PS6000_RANGE range).
      analogueOffset - a voltage to add to the input channel before digitization.
      bandwdth - the bandwidth limiter(an enumeration from the PS6000_BANDWIDTH_LIMITER range)

      Output parameters:

      status - status code returned by the driver.

      For further information on the ps6000SetChannel function please refer to the PicoScope 6000 Series PC Oscilloscopes Programmer's Guide.

  Method ps6000SetDataBuffer
    MCode:
      function status = ps6000SetDataBuffer(obj, channel, pBuffer, bufferLth, mode)
      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
          status = calllib('ps6000', 'ps6000SetDataBuffer', ...
              obj.DriverData.unitHandle, channel, pBuffer, bufferLth, mode);

          if(status ~= PicoStatus.PICO_OK)

              error('ps6000SetDataBuffer: error code %d', status);

          end
    Description: ps6000SetDataBuffer(obj, channel, buffer, bufferLth, mode) tells the driver where to store the data, either unprocessed or downsampled, that will be returned after the next call to one of the GetValues functions.

      Input parameters:

      obj - the object representing the device.
      channel - the channel to which the buffer corresponds (an enumeration from the PS6000_CHANNEL range).
      pBuffer - a libpointer to a 1-D array to receive the data values for the channel.
      bufferLth - the length of the buffer array.
      mode - the downsampling mode (an enumeration from the PS6000_RATIO_MODE range).

      Output parameters:

      status - status code returned by the device.

      If capturing data in streaming mode without aggregation, buffer must also be passed as the driverBuffer argument for the setAppAndDriverBuffers function call.

      For further information on the ps6000SetDataBuffer function please refer to the PicoScope 6000 Series  PC Oscilloscopes Programmer's Guide.

  Method ps6000SetDataBuffers
    MCode:
      function status = ps6000SetDataBuffers(obj, channel, pBufferMax, pBufferMin, bufferLth, ratioMode)
      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
          status = calllib('ps6000', 'ps6000SetDataBuffers', ...
              obj.DriverData.unitHandle, channel, pBufferMax, pBufferMin, ...
              bufferLth, ratioMode);

          if(status ~= PicoStatus.PICO_OK)

              error('ps6000SetDataBuffers: error code %d', status);

          end
    Description: ps6000SetDataBuffers(obj, channel, pBufferMax, pBufferMin, bufferLth, ratioMode) tells the driver the location of one or two buffers for receiving data.

      If aggregate mode is not being used, then ps6000SetDataBuffer can optionally be used instead.

      Input parameters:

      obj - the object representing the device.
      channel -  the channel for which to set the buffers (an enumeration from the PS6000_CHANNEL range).
      pBufferMax - a libpointer to a 1-D array to receive the maximum data values in aggregation mode, or the non-aggregated values otherwise.
      pBufferMin -  a libpointer to a 1-D array to receive the minimum aggregated data values. Not used in other downsampling modes.
      bufferLth - the size of the arrays to which pBufferMax and pBufferMin are pointers.
      mode - the downsampling mode to use (an enumeration from the PS6000_RATIO_MODE range).

      Output parameters:

      status - status code returned by the device.

      If capturing data in streaming mode with aggregation, pBufferMax and pBufferMin must also be passed as the driverMaxBuffer and driverMinBuffer arguments respectively for the setMaxMinAppAndDriverBuffers function call.

      For further information on the ps6000SetDataBuffers function please refer to the PicoScope 6000 Series PC Oscilloscopes Programmer's Guide.

  Method ps6000SetExternalClock
    MCode:
      function status = ps6000SetExternalClock(obj, frequency, voltage)
      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
          if (abs(voltage) >= 1)

              error(['PS6000IDSetExternalClock:InvalidThreshold', ...
                  'Please choose threshold value in the range ±1 V\n']);

          elseif(frequency < 0 || frequency > 4)

              error(['PS6000IDSetExternalClock:InvalidFrequency', ...
                  'Please choose frequency enumeration value between ' ...
                  '0 (PS6000_FREQUENCY_5MHZ) and 4 (PS6000_FREQUENCY_25MHZ)']);

          end

          threshold = voltage * 32512;

          status = calllib('ps6000', 'ps6000SetExternalClock', ...
              obj.DriverData.unitHandle, frequency, threshold);

          if (status == PicoStatus.PICO_INVALID_CHANNEL)

              error('ps6000SetChannel: error code %d\n', status);

          end
    Description: ps6000SetExternalClock(obj, frequency, voltage) yells the scope whether or not to tuse an external clock signal fed into the AUX input.

      This function may be used with the Test and Measurement Tool.

      Input parameters:

      obj - the object representing the device.

      frequency - the external clock frequency (an enumeration from the  PS6000_EXTERNAL_FREQUENCY range).

      voltage -  the logic threshold voltage between -1 and 1 V

      Output parameters:

      status - status code returned by the driver.

      For further information on the ps6000SetExternalClock function please refer to the PicoScope 6000 Series PC Oscilloscopes Programmer's Guide.

  Method ps6000Stop
    MCode:
      function status = ps6000Stop(obj)
      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
          status = calllib('ps6000', 'ps6000Stop', obj.DriverData.unitHandle);

          if(status ~= PicoStatus.PICO_OK)

              error('ps6000Stop: error code %d\n', status)

          end
    Description: ps6000Stop(obj) stops the scope device from sampling data.

      This function may be used with the Test and Measurement Tool.

      Input parameters:

      obj - the object representing the device.

      Output parameters:

      status - status code returned by the driver.

      For further information on the ps6000Stop function please refer to the PicoScope 6000 Series PC Oscilloscopes Programmer's Guide.

  Method resetDevice
    MCode:
      function resetDevice(obj)
      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
          fprintf('Setting Device Parameters...\n\n');

          obj.DriverData.channelCount = PicoConstants.QUAD_SCOPE;
          obj.DriverData.firstRange = evalin('base', 'ps6000Enuminfo.enPS6000Range.PS6000_50MV');
          obj.DriverData.lastRange = evalin('base', 'ps6000Enuminfo.enPS6000Range.PS6000_20V');
          obj.DriverData.hasHardwareEts = PicoConstants.TRUE;
          obj.DriverData.maxSamplingRate = PicoConstants.MAX_SAMPLING_RATE_5GSPS;

          awgMaxBufferSize = 0;

          [status, ~, ~, ~, awgMaxBufferSize] = calllib('ps6000','ps6000SigGenArbitraryMinMaxValues', obj.DriverData.unitHandle, ...
           0, 0, 0, awgMaxBufferSize);

          if(status == PicoStatus.PICO_OK)

              obj.DriverData.awgBufferSize = awgMaxBufferSize;
              obj.DriverData.sigGenType = PicoConstants.SIG_GEN_AWG;

          else

              obj.DriverData.awgBufferSize = awgMaxBufferSize;
              obj.DriverData.sigGenType = PicoConstants.SIG_GEN_FUNCT_GEN;
              obj.DriverData.dacFrequency = PicoConstants.AWG_DAC_FREQUENCY_ZERO

          end

          switch(obj.InstrumentModel(4))

              case'2';

                 obj.DriverData.bandwidth = PicoConstants.BANDWIDTH_250MHZ;
                 obj.DriverData.bufferMemory = PicoConstants.BUFFER_MEMORY_256MS;

              case '3'

                 obj.DriverData.bandwidth = PicoConstants.BANDWIDTH_350MHZ;
                 obj.DriverData.bufferMemory = PicoConstants.BUFFER_MEMORY_512MS;

              case '4'

                 obj.DriverData.bandwidth = PicoConstants.BANDWIDTH_500MHZ;
                 obj.DriverData.bufferMemory = PicoConstants.BUFFER_MEMORY_1GS;

              case '7'

                 obj.DriverData.bandwidth = PicoConstants.BANDWIDTH_1GHZ;
                 obj.DriverData.bufferMemory = PicoConstants.BUFFER_MEMORY_1GS;
                 obj.DriverData.firstRange = evalin('base', 'ps6000Enuminfo.enPS6000Range.PS6000_100MV');
                 obj.DriverData.lastRange = evalin('base', 'ps6000Enuminfo.enPS6000Range.PS6000_100MV');

              otherwise

                  Error('Variant not supported.');

          end

          % Adjust buffer memory for A/B/C/D variants

          if(length(obj.InstrumentModel) > 4)

              switch(obj.InstrumentModel(5))

                  case 'A';

                      obj.DriverData.bufferMemory = obj.DriverData.bufferMemory / 2;

                  case 'D';

                      obj.DriverData.bufferMemory = obj.DriverData.bufferMemory * 2;

                  otherwise

                   % Do nothing

              end

          else

              % 6402/6403/6404 models
              if((length(obj.InstrumentModel) == 4))

                   switch(obj.InstrumentModel)

                      case'6402';

                         obj.DriverData.bandwidth = PicoConstants.BANDWIDTH_350MHZ;
                         obj.DriverData.bufferMemory = PicoConstants.BUFFER_MEMORY_32MS;

                      case '6403'

                         obj.DriverData.bandwidth = PicoConstants.BANDWIDTH_350MHZ;
                         obj.DriverData.bufferMemory = PicoConstants.BUFFER_MEMORY_1GS;

                      case '6404'

                         obj.DriverData.bandwidth = PicoConstants.BANDWIDTH_500MHZ;
                         obj.DriverData.bufferMemory = PicoConstants.BUFFER_MEMORY_1GS;

                   end

              end

          end

          %Inform the wrapper dll of the number of channels on the device
          calllib('ps6000Wrap', 'setChannelCount', obj.DriverData.unitHandle, ...
             obj.DriverData.channelCount);

          % Set the max. ADC value

          obj.DriverData.maxADCValue = PS6000Constants.PS6000_MAX_VALUE;

          % Set the min. ADC value

          obj.DriverData.minADCValue  = PS6000Constants.PS6000_MIN_VALUE;

          % Set the max. AUX IN value

          obj.DriverData.maxAuxInValue = PS6000Constants.PS6000_MAX_AUX_IN_VALUE;

          % Reset Channels
          [ch] = invoke(obj, 'setChannelDefaults');

          % Turn off ETS

          disp('Turning off Equivalent Time Sampling...');

          blockGroupObj = get(obj, 'Block');
          blockGroupObj = blockGroupObj(1);

          [ets_status, st_ps] = invoke(blockGroupObj, 'ps6000SetEts', evalin('base', ...
                                  'ps6000Enuminfo.enPS6000EtsMode.PS6000_ETS_OFF'), 0, 0);

          % Turn off trigger

          fprintf('Turning off trigger...\n\n');

          obj.DriverData.autoTriggerMs = 0;
          obj.DriverData.delay = 0;

          % Obtain Trigger group object

          triggerGroupObj = get(obj, 'Trigger');
          triggerGroupObj = triggerGroupObj(1);
          triggerStatus = invoke(triggerGroupObj, 'setTriggerOff');

          fprintf('Default Block mode parameters:-\n\n');

          % Set the default number of pre-trigger and post-trigger samples
          obj.DriverData.numPreTriggerSamples = 0;

          obj.DriverData.numPostTriggerSamples = 1000000;

          totalSamples = obj.DriverData.numPreTriggerSamples + obj.DriverData.numPostTriggerSamples;

          % Set the timebase - 1us sampling interval (1MS/s)
          obj.DriverData.timebase = 161;

          timeIntervalNs = 0;
          segmentIndex = 0;

          % Call get timebase to return interval in ns

          [timebaseStatus, timeIntervalNs, maxBlockSamples] = ...
              invoke(obj, 'ps6000GetTimebase2', obj.DriverData.timebase, segmentIndex);

          fprintf('               Timebase index : %d\n', obj.DriverData.timebase);
          fprintf('                 Time Interval: %.1f ns\n', timeIntervalNs);
          fprintf(' Number of pre-trigger samples: %d\n', obj.DriverData.numPreTriggerSamples);
          fprintf('Number of post-trigger samples: %d\n', obj.DriverData.numPostTriggerSamples);
          fprintf('       Total number of samples: %d\n', totalSamples);

          fprintf('\n');

          fprintf('Default Streaming mode parameters:-\n\n');

          obj.DriverData.streamingInterval = 1e-6; % 1us -> 1MS/s
          obj.DriverData.autoStop = PicoConstants.TRUE;

          fprintf(' Streaming interval: %1.2d s\n', obj.DriverData.streamingInterval);
          fprintf('Streaming auto stop: %d\n', obj.DriverData.autoStop);

          fprintf('\n');

          if(obj.DriverData.sigGenType == PicoConstants.SIG_GEN_FUNCT_GEN || ...
                  obj.DriverData.sigGenType == PicoConstants.SIG_GEN_AWG)

              fprintf('Default Signal generator parameters:-\n\n');

              obj.DriverData.startFrequency = 1000;

              obj.DriverData.stopFrequency = 1000;

              obj.DriverData.offsetVoltage = 0;
              obj.DriverData.peakToPeakVoltage = 2000;

              fprintf('      Start frequency: %d Hz\n', obj.DriverData.startFrequency);
              fprintf('       Stop frequency: %d Hz\n', obj.DriverData.stopFrequency);
              fprintf('       Offset voltage: %d mV\n', obj.DriverData.offsetVoltage);
              fprintf(' Peak to Peak voltage: %d mV\n', obj.DriverData.peakToPeakVoltage);

          end

          fprintf('\n');
          disp('Initialisation complete.');
    Description: resetDevice(obj) sets the default parameters for the device.

      This includes the folliowing:

      1. Device specific properties.
      2. Enabling all available channels to 5V range, DC coupled, full bandwidth with 0 analogue offset.
      3. Turning off the trigger.
      4. Block mode parameters:

      	Timebase index - 161, corresponding to a sampling interval of 1us.
      	numPreTriggerSamples - 0
       	numPostTriggerSamples - 1000000

      5. Streaming mode parameters:

      	streamingInterval - 1e-6 (seconds)
      	autoStop - 1
    
      6. Signal Generator parameters:
        
      	offsetVoltage - 0mV
      	peakToPeakVoltage - 2000mV
      	startFrequency - 1000 (Hz)
      	stopFrequency - 1000 (Hz)

  Method setChannelDefaults
    MCode:
      function [setCh] = setChannelDefaults(obj)
      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
          fprintf('Default Channel Setup:-\n');
          fprintf('-----------------------\n\n');

          noChannel = obj.DriverData.channelCount;

          % Create a num channels x fields array
          chSettings = zeros(noChannel, 5);
          ch = zeros(noChannel, 1);
          setCh = zeros(noChannel,1);

          % Matrix of values to represent channels (rows) x properties (cols)
          obj.DriverData.channelSettings = zeros(noChannel, 5);

          ch(1) = evalin('base', 'ps6000Enuminfo.enPS6000Channel.PS6000_CHANNEL_A');
          ch(2) = evalin('base', 'ps6000Enuminfo.enPS6000Channel.PS6000_CHANNEL_B');
          ch(3) = evalin('base', 'ps6000Enuminfo.enPS6000Channel.PS6000_CHANNEL_C');
          ch(4) = evalin('base', 'ps6000Enuminfo.enPS6000Channel.PS6000_CHANNEL_D');

          % Assign values used repeatedly to local variable

          true = PicoConstants.TRUE;
          strVolt = '5V';

          if (obj.InstrumentModel(4) == '7')

              range = evalin('base', 'ps6000Enuminfo.enPS6000Range.PS6000_100MV');
              strVolt = '100mV';
              type = evalin('base','ps6000Enuminfo.enPS6000Coupling.PS6000_DC_50R');

          else

              type = evalin('base','ps6000Enuminfo.enPS6000Coupling.PS6000_DC_1M');
              range = evalin('base', 'ps6000Enuminfo.enPS6000Range.PS6000_5V');

          end

          bandwidth = evalin('base', 'ps6000Enuminfo.enPS6000BandwidthLimiter.PS6000_BW_FULL');

          analogueOffset = 0.0;

          % Set Channels A through D, updating internal settings
          % Parameters are channel index, enabled, dc coupling, range index and
          % analogue offset
          for i = 1:noChannel

              channelSettings(i).enabled = true;
              channelSettings(i).dc = type;
              channelSettings(i).range = range;
              channelSettings(i).offset = analogueOffset;
              channelSettings(i).bandwidth = bandwidth;

              chSettings(i, :) = cell2mat(struct2cell(channelSettings(i)))';

              setCh(i) = invoke(obj, 'ps6000SetChannel', ch(i), true, type, range, analogueOffset, bandwidth);
              fprintf(strcat('Channel', char('A'+ i - 1),':-\n\tEnabled: True\n\tCoupling: DC\n\tRange: ', ...
                  strVolt,'\n\tAnalogue Offset: 0.0 V\n\tBandwidth: Full\n\n'));

          end

          obj.DriverData.channelSettings = chSettings;

          % Clear local variables

          clear i;
          clear ch;
          clear channelSettings;
          clear chSettings;
          clear type;
          clear true;
    Description: setChannelDefaults(obj) sets the following default values for any Analogue channels found on the device:

      Analogue Channel:

      Enabled               : True
      Coupling              : DC_1M
      Voltage Range    : 5V (100mV for the 6407)
      Analogue Offset : 0.0V
      Bandwidth	      : Full

Group block
  Description: The Block group contains a set of properties and functions related to the block data collection functionality of the device.
  Size: 1
  Mappings ChannelMap Command="block" Index="1"

  Method getBlockData
    MCode:
      function [numSamples, overflow, channelA, channelB, channelC, channelD] = getBlockData(obj, startIndex, segmentIndex, ratio, ratioMode)
      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
          % Check ratio mode is not aggregated (ps6000Enuminfo.enPS6000RatioMode.PS6000_RATIO_MODE_AGGREGATE)
          if(ratioMode ~= 1)

              deviceObj = get(obj, 'Parent');
              unitHandle = deviceObj.DriverData.unitHandle;

              channelCount = deviceObj.DriverData.channelCount;

              % Retrieve channel settings - channel x data field matrix
              channelSettings = deviceObj.DriverData.channelSettings;

              % Create empty arrays for channel data.
              channelA = [];
              channelB = [];
              channelC = [];
              channelD = [];

              % Overflow indicator
              overflow = 0;

              % Initialise variable for array of libpointers
              pBuffer = libpointer;

              % Initialise status
              setBufferStatus = 0;

              % Total number of samples to set for data buffers, taking into
              % account the downsampling ratio
              totalSamples = ceil((deviceObj.DriverData.numPreTriggerSamples + ...
                                      deviceObj.DriverData.numPostTriggerSamples)/ratio);

              if (deviceObj.DriverData.displayOutput == PicoConstants.TRUE)

                  fprintf('getBlockData: Setting up data buffers...\n');

              end

              for ch = 1:channelCount

                  % Set Data Buffer if channel is enabled - index 1 indicates if
                  % channel is enabled
                  if(channelSettings(ch,1) == PicoConstants.TRUE)

                      % Store array of libpointers
                      pBuffer(ch) = libpointer('int16Ptr', zeros(totalSamples, 1, 'int16'));

                      setBufferStatus = calllib('ps6000', 'ps6000SetDataBuffer', ...
                          unitHandle, (ch - 1), pBuffer(ch), totalSamples, ratioMode);

                      if(setBufferStatus ~= PicoStatus.PICO_OK)

                          error('getBlockData: Set Data Buffer for Channel %d error code %d', ...
                              (ch - 1), setBufferStatus);

                      end

                  end

              end

              if (deviceObj.DriverData.displayOutput == PicoConstants.TRUE)

                  fprintf('getBlockData: Retrieving data...\n');

              end

              % Call ps6000GetValues
              [getValuesStatus, numSamples, overflow] = ...
                  calllib('ps6000', 'ps6000GetValues', unitHandle, startIndex, ...
                      totalSamples, ratio, ratioMode, segmentIndex, overflow);

              if (getValuesStatus == PicoStatus.PICO_OK)

                  if (deviceObj.DriverData.displayOutput == PicoConstants.TRUE)

                      fprintf('getBlockData: Assigning data to array and converting to milliVolts.\n');

                  end

                  % Obtain max ADC count value
                  maxADCValue = double(deviceObj.DriverData.maxADCValue);

                  % Retrieve data values for enabled channels
                  for ch = 1:channelCount

                      if (channelSettings(ch,1) == PicoConstants.TRUE)

                          % Obtain the index for the
                          % PicoConstants.SCOPE_INPUT_RANGES array corresponding
                          % to the voltage range selected for the channel.
                          scopeInputIndex = channelSettings(ch,3) + 1;

                          % Obtain the voltage range for the channel.
                          voltageRange = PicoConstants.SCOPE_INPUT_RANGES(scopeInputIndex);

                          bufferValues = adc2mv(pBuffer(ch).Value, voltageRange, ...
                              maxADCValue);

                          switch(ch - 1)

                              case evalin('base', 'ps6000Enuminfo.enPS6000Channel.PS6000_CHANNEL_A')

                                  channelA = bufferValues;

                              case evalin('base', 'ps6000Enuminfo.enPS6000Channel.PS6000_CHANNEL_B')

                                  channelB = bufferValues;

                              case evalin('base', 'ps6000Enuminfo.enPS6000Channel.PS6000_CHANNEL_C')

                                  channelC = bufferValues;

                              case evalin('base', 'ps6000Enuminfo.enPS6000Channel.PS6000_CHANNEL_D')

                                  channelD = bufferValues;

                              otherwise

                                  % Do nothing

                          end

                      end

                  end

                  if (deviceObj.DriverData.displayOutput == PicoConstants.TRUE)

                      fprintf('getBlockData: Data succesfully retrieved.\n');

                  end

              else

                  error('getBlockData: Error retrieving data values - code: %d', getValuesStatus);

              end

          else

              error('getBlockData: Aggregate Mode data collection not supported by this function.');

          end
    Description: getBlockData(obj, startIndex, segmentIndex, ratio, ratioMode) returns block mode data with or without downsampling starting at the specified sample number.

      Memory for the data arrays is allocated and the driver is informed where to store the data prior to retrieval. Data collection in Aggregation mode or with more than one downsampling mode is NOT supported by this function.

      This function can be used with the Test and Measurement Tool.

      Input parameters:

      obj - the object representing the Block group.
      startIndex - a zero-based index that indicates the start point for data collection. Use zero to start at the first sample.
      segmentIndex - the number of the memory segment to be used/where the data is stored. Use 0 if the memory has not been segmented.
      ratio - the downsampling factor that will be applied to the raw data.
      ratioMode - which downsampling mode to use (specified by an enumeration from the PS6000_RATIO_MODE range of enumerations excluding PS6000_RATIO_MODE_AGGREGATE).


      Output parameters:

      status - status code returned by the driver.
      numSamples - the number of samples retrieved from the driver.
      overflow - a set of flags that indicate whether an overvoltage has occurred on any of the channels.
      channelA - an array containing data values (in milliVolts) for channel A.
      channelB - an array containing data values (in milliVolts) for channel B.
      channelC - an array containing data values (in milliVolts) for channel C.
      channelD - an array containing data values (in milliVolts) for channel D.

      Channels not enabled or not supported by this device will be returned as an empty array.

      Please also refer to the ps6000SetDataBuffer and ps6000GetValues functions in the PicoScope 6000 Series PC Oscilloscopes Programmer's Guide.

  Method getEtsBlockData
    MCode:
      function [numSamples, overflow, etsTimes, channelA, channelB, channelC, channelD] = getEtsBlockData(obj, startIndex, segmentIndex, ratio, ratioMode)
      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
           % Check ratio mode is not aggregated (ps6000Enuminfo.enPS6000RatioMode.PS6000_RATIO_MODE_AGGREGATE)
          if (ratioMode ~= 1)

              deviceObj = get(obj, 'Parent');
              unitHandle = deviceObj.DriverData.unitHandle;

              channelCount = deviceObj.DriverData.channelCount;

              % Retrieve channel settings - channel x data field matrix
              channelSettings = deviceObj.DriverData.channelSettings;

              % Create empty arrays for channel data.
              channelA = [];
              channelB = [];
              channelC = [];
              channelD = [];

              % Overflow indicator
              overflow = 0;

              % Initialise variable for array of libpointers for channels
              pBuffer = libpointer;

              % Initialise status
              setBufferStatus = 0;

              % Total number of samples to set for data buffers, taking into
              % account the downsampling ratio
              totalSamples = ceil((deviceObj.DriverData.numPreTriggerSamples + ...
                                      deviceObj.DriverData.numPostTriggerSamples)/ratio);

              if (deviceObj.DriverData.displayOutput == PicoConstants.TRUE)

                  fprintf('getEtsBlockData: Setting up data buffers...\n');

              end

              for ch = 1:channelCount

                  % Set Data Buffer if channel is enabled - index 1 indicates if
                  % channel is enabled
                  if (channelSettings(ch,1) == PicoConstants.TRUE)

                      % Store array of libpointers
                      pBuffer(ch) = libpointer('int16Ptr', zeros(totalSamples, 1, 'int16'));

                      setBufferStatus = calllib('ps6000', 'ps6000SetDataBuffer', ...
                          unitHandle, (ch - 1), pBuffer(ch), totalSamples, ratioMode);

                      if(setBufferStatus ~= PicoStatus.PICO_OK)

                          error('getEtsBlockData: Set Data Buffer for Channel %d status code %d', ...
                              (ch - 1), setBufferStatus);

                      end

                  end

              end

              % Set ETS Time buffer
              pEtsTimeBuffer = libpointer('int64Ptr', zeros(totalSamples, 1, 'int64'));

              setEtsTimeBufferStatus = calllib('ps6000', 'ps6000SetEtsTimeBuffer', ...
                          unitHandle, pEtsTimeBuffer, totalSamples);

              if (setEtsTimeBufferStatus ~= PicoStatus.PICO_OK)

                  error(['getEtsBlockData: ps60000SetEtsTimeBuffer returned status code %d.'...
                      'Please refer to the PicoStatus.m file.'], setEtsTimeBufferStatus);

              end

              if (deviceObj.DriverData.displayOutput == PicoConstants.TRUE)

                  fprintf('getEtsBlockData: Retrieving data...\n');

              end

              % TODO: Remove sleep once driver fix for buffers available.
              pause(2);

              % Call ps6000GetValues
              [getValuesStatus, numSamples, overflow] = ...
                  calllib('ps6000', 'ps6000GetValues', unitHandle, startIndex, ...
                  totalSamples, ratio, ratioMode, segmentIndex, overflow);

              if (getValuesStatus == PicoStatus.PICO_OK)

                  % Retrieve ETS times
                  etsTimes = pEtsTimeBuffer.Value;

                  if (deviceObj.DriverData.displayOutput == PicoConstants.TRUE)

                      fprintf('getEtsBlockData: Assigning data to arrays and converting to millivolts.\n');

                  end

                  % Obtain max ADC count value
                  maxADCValue = double(deviceObj.DriverData.maxADCValue);

                  % Retrieve data values for enabled channels
                  for ch = 1:channelCount

                      if (channelSettings(ch,1) == PicoConstants.TRUE)

                          % Obtain the index for the
                          % PicoConstants.SCOPE_INPUT_RANGES array corresponding
                          % to the voltage range selected for the channel.
                          scopeInputIndex = channelSettings(ch,3) + 1;

                          % Obtain the voltage range for the channel.
                          voltageRange = PicoConstants.SCOPE_INPUT_RANGES(scopeInputIndex);

                          bufferValues = adc2mv(pBuffer(ch).Value, voltageRange, ...
                              maxADCValue);

                          switch(ch - 1)

                              case 0 % Channel A

                                  channelA = bufferValues;

                              case 1 % Channel B

                                  channelB = bufferValues;

                              case 2 % Channel C

                                  channelC = bufferValues;

                              case 3 % Channel D

                                  channelD = bufferValues;

                              otherwise

                                  % Do nothing

                          end

                      end

                  end

                  if (deviceObj.DriverData.displayOutput == PicoConstants.TRUE)

                      fprintf('getEtsBlockData: Data succesfully retrieved.\n');

                  end

              else

                  error('getEtsBlockData: Status code: %d. Please refer to the PicoStatus.m file.', getValuesStatus);

              end

          else

              error('getEtsBlockData: Aggregate Mode data collection not supported by this function.');

          end
    Description: getEtsBlockData(obj, startIndex, segmentIndex, ratio, ratioMode) returns Equivalent Time Sampling (ETS) block mode data with or without downsampling starting at the specified sample number.

      Memory for the data arrays is allocated and the driver is informed where to store the data prior to retrieval. Data collection in Aggregation mode or with more than one downsampling mode is NOT supported by this function.

      This function can be used with the Test and Measurement Tool.

      Input parameters:

      obj - the object representing the Block group.
      startIndex - a zero-based index that indicates the start point for data collection. Use zero to start at the first sample.
      segmentIndex - the number of the memory segment to be used/where the data is stored. Use 0 if the memory has not been segmented.
      ratio - the downsampling factor that will be applied to the raw data.
      ratioMode - which downsampling mode to use (specified by an enumeration from the PS6000_RATIO_MODE (enPS6000RatioMode) range of enumerations excluding PS6000_RATIO_MODE_AGGREGATE).


      Output parameters:

      numSamples - the number of samples retrieved from the driver.
      overflow - a set of flags that indicate whether an overvoltage has occurred on any of the channels.
      etsTimes - an array containing the times (in femtoseconds) at which each sample was captured.
      channelA - an array containing data values (in millivolts) for Channel A.
      channelB - an array containing data values (in millivolts) for Channel B.
      channelC - an array containing data values (in millivolts) for Channel C.
      channelD - an array containing data values (in millivolts) for Channel D.

      Channels not enabled will be returned as an empty array.

      Please also refer to the ps6000SetEtsTimeBuffer, ps6000SetDataBuffer and ps6000GetValues functions in the PicoScope 6000 Series PC Oscilloscopes and Programmer's Guide.

  Method ps6000GetTriggerTimeOffset
    MCode:
      function [status, timeUpper, timeLower, timeUnits] = ps6000GetTriggerTimeOffset(obj, segmentIndex)
      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
          deviceObj = get(obj, 'Parent');

          timeUpper = 0;
          timeLower = 0;
          timeUnits = 0;

          [status, timeUpper, timeLower, timeUnits] = calllib('ps6000', ...
              'ps6000GetTriggerTimeOffset', deviceObj.DriverData.unitHandle, ...
              timeUpper, timeLower, timeUnits, segmentIndex);

          if(status ~= PicoStatus.PICO_OK)

              error('ps6000GetTriggerTimeOffset: Status code: %d. Please refer to the PicoStatus.m file.', status);

          end
    Description: ps6000GetTriggerTimeOffset(obj, segmentIndex) gets the time, as two 4-byte values, at which the trigger occurred.

      This function may be used with the Test and Measurement Tool.

      Input parameters:

      obj - the object representing the Block group.
      segmentIndex - the number of the memory segment for which the information is required.

      Output parameters:

      status - status code returned by the driver.
      timeUpper - the upper 32 bits of the time at which the trigger point occurred.
      timeLower - the lower 32 bits of the time at which the trigger point occurred.
      timeUnits - the time units in which timeUpper and timeLower are measured (represented by a PS6000_TIME_UNITS enumeration).

      For further information on the ps6000GetTriggerTimeOffset function please refer to the PicoScope 6000 Series PC Oscilloscopes Programmer's Guide.

  Method ps6000GetTriggerTimeOffset64
    MCode:
      function [status, time, timeUnits] = ps6000GetTriggerTimeOffset64(obj, segmentIndex)
      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
          deviceObj = get(obj, 'Parent');

          time = 0;
          timeUnits = 0;

          [status, timeUnits] = calllib('ps6000', ...
              'ps6000GetTriggerTimeOffset64', deviceObj.DriverData.unithandle, ...
              time, timeUnits, segmentIndex);

          if(status ~= PicoStatus.PICO_OK)

              error('ps6000GetTriggerTimeOffset64: Status code: %d. Please refer to the PicoStatus.m file.', status);

          end
    Description: ps6000GetTriggerTimeOffset64(obj, segmentIndex)  gets the time, as a single 64-bit value, at which the trigger occurred.

      This function may be used with the Test and Measurement Tool.

      Input parameters:

      obj - the object representing the Block group.
      segmentIndex -  the number of the memory segment for which the information is required.

      Output parameters:

      status - status code returned by the driver.
      time - the time at which the trigger point occurred.
      timeUnits - the time units in which time is measured (as an enumeration).

      For further information on the ps6000GetTriggerTimeOffset64 function please refer to the PicoScope 6000 Series PC Oscilloscopes Programmer's Guide.

  Method ps6000GetValues
    MCode:
      function [status, numSamples, overflow] = ps6000GetValues(obj, startIndex, noOfSamples, downSampleRatio, downSampleRatioMode, segmentIndex)
      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
          deviceObj = get(obj, 'Parent');

          pNumSamples = libpointer('uint32Ptr', noOfSamples);
          pOverflow = libpointer('int16Ptr', 0);

          [status] = calllib('ps6000', 'ps6000GetValues', ...
              deviceObj.DriverData.unitHandle, startIndex, pNumSamples, downSampleRatio, ....
              downSampleRatioMode, segmentIndex, pOverflow);

          if(status ~= PicoStatus.PICO_OK)

              error('ps6000GetValues: Status code: %d. Please refer to the PicoStatus.m file.', status);

          else

              overflow = pOverflow.Value;
              numSamples = pNumSamples.Value;

          end
    Description: ps6000GetValues(obj, startIndex, noOfSamples, downSampleRatio, downSampleRatioMode, segmentIndex) returns block-mode data, with or without downsampling, starting at the specified sample number.

      Input parameters:

      obj - the object representing the Block group.
      startIndex - a zero-based index that indicates the start point for data collection.
      noOfSamples - the number of samples required.
      downSampleRatio - the downsampling factor that will be applied to the raw data.
      downSampleRatioMode - which downsampling mode to use (specified by enumeration).
      segmentIndex - the zero-based number of the memory segment where the data is stored.

      Output parameters:

      status - status code returned by the driver.
      numSamples - the actual number retrieved from the driver.
      overflow - a set of flags that indicate whether an overvoltage has occurred on any of the channels.

      For further information on the ps6000GetValues function please refer to the PicoScope 6000 Series PC Oscilloscopes Programmer's Guide.

  Method ps6000IsReady
    MCode:
      function ready = ps6000IsReady(obj)
      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
          deviceObj = get(obj, 'Parent');

          ready = 0; % Initialise value for pointer

          [status, ready] = calllib('ps6000', 'ps6000IsReady', ...
                                  deviceObj.DriverData.unitHandle, ready);

          if(status == PicoStatus.PICO_OK || status == PicoStatus.PICO_BUSY)

              % Do nothing

          else

              error('ps6000IsReady:- Status code: %d. Please refer to the PicoStatus.m file.', status);

          end
    Description: ps6000IsReady(obj) indicates if the device has finished collecting the requested number of samples.

      Use this function to poll the driver to indicate if block data collection has finished if using the ps6000RunBlock function.

      This function may be used with the Test and Measurement Tool.

      Input parameters:

      obj - the object representing the Block group.

      Output parameters:

      status - the status code returned by the driver.
      ready - zero, the if device is still collecting. Non-zero, the device has finished collecting.

      For further information on the ps6000IsReady function please refer to the PicoScope 6000 Series PC Oscilloscopes Programmer's Guide.

  Method ps6000RunBlock
    MCode:
      function [status, timeIndisposedMs] = ps6000RunBlock(obj, segmentIndex)
      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
          deviceObj = get(obj, 'Parent');

          timeIndisposedMs = 0;   % Initialise to pass as pointer.
          lpReady = [];           % Set to NULL - Callback function not used.
          pParameter = [];        % Set to NULL - Callback function not used.

          unitHandle          = deviceObj.DriverData.unitHandle;
          timebaseIndex       = deviceObj.DriverData.timebase;
          preTriggerSamples   = deviceObj.DriverData.numPreTriggerSamples;
          postTriggerSamples  = deviceObj.DriverData.numPostTriggerSamples;
          oversample          = 1;

          if (deviceObj.DriverData.displayOutput == PicoConstants.TRUE)

              fprintf('runBlock:- Collecting block of data:\n\tTimebase: %u\n\tPre-trigger samples: %u\n\tPost-trigger samples: %u\n', ...
                  timebaseIndex, preTriggerSamples, postTriggerSamples);

          end

          [status, timeIndisposedMs] = calllib('ps6000', 'ps6000RunBlock', ...
              unitHandle, preTriggerSamples, postTriggerSamples, ...
              timebaseIndex, oversample, timeIndisposedMs, segmentIndex, lpReady, pParameter);

          if (status ~= PicoStatus.PICO_OK)

              error('ps6000RunBlock:- Status code: %d. Please refer to the PicoStatus.m file.', status);

          end
    Description: ps6000RunBlock(obj, segmentIndex) starts collecting data in block mode.

      If additional code does not need to be called prior to the device indicating that it has collected data, use the runBlock function in place of this function.

      This function can be used with the Test and Measurement Tool.

      Input parameters:

      obj - the object representing the Block group.
      segmentIndex - zero-based index, specifying which memory segment to use. Set this parameter to 0, if memory has not been segmented.

      Output parameters:

      status - the status code returned from the driver. 
      timeIndisposedMs - the time in milliseconds, that the device will spend collecting samples.

      For further information on the ps6000RunBlock function please refer to the PicoScope 6000 Series PC Oscilloscopes Programmer's Guide.

  Method ps6000SetEts
    MCode:
      function [status, sampleTimePicoSeconds] = ps6000SetEts(obj, mode, etsCycles, etsInterleave)
      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
          deviceObj = get(obj, 'Parent');

          sampleTimePicoSeconds = 0; % Initialise to pass as pointer

          unitHandle = deviceObj.DriverData.unitHandle;

          if (mode == evalin('base', 'ps6000Enuminfo.enPS6000EtsMode.PS6000_ETS_OFF'))

              [status, sampleTimePicoSeconds] = calllib('ps6000', 'ps6000SetEts', ...
                      unitHandle, mode, etsCycles, etsInterleave, sampleTimePicoSeconds);

          elseif(etsCycles > 0 && etsInterleave > 0)

              maxEtsInterleave = 0;

              % Confirm if number of cycles or interleave is correct

              etsRatio = etsCycles / etsInterleave;

              if (etsRatio < 2 || etsRatio > 5)

                  error('ps6000SetEts: etsCycles must be between two and five times the value of etsInterleave');

              end

              if (etsCycles > PS6000Constants.PS6000_MAX_ETS_CYCLES)

                  error('ps6000SetEts: Number of ETS cycles has exceeded the maximum (%d).', PS6000Constants.PS6000_MAX_ETS_CYCLES);

              end

              if (etsInterleave > PS6000Constants.PS6000_MAX_ETS_INTERLEAVE)

                  error('ps6000SetEts: Number of waveforms has exceeded the maximum (%d).', PS6000Constants.PS6000_MAX_ETS_INTERLEAVE);

              end

              [status, sampleTimePicoSeconds] = calllib('ps6000', 'ps6000SetEts', ...
                      unitHandle, mode, etsCycles, etsInterleave, sampleTimePicoSeconds);

          else

              error('ps6000SetEts: etsCycles and etsInterleave must both be greater than 0.')

          end
    Description: ps6000SetEts(obj, mode, etsCycles, etsInterleave) is used to enable or disable ETS (equivalent-time sampling) and to set the ETS parameters.

      This function may be used with the Test and Measurement Tool.

      Input parameters:

      obj - the object representing the Block group.
      mode - must be one of the following enumeration values from the PS6000_ETS_MODE (enPS6000EtsMode) range:

      	PS6000_ETS_OFF    (0)
      	PS6000_ETS_FAST  (1)
      	PS6000_ETS_SLOW (2)

      etsCycles - the number of cycles to store; must be greater than zero and between 2 and 5 times greater than etsInterleave.
      etsInterleave - the number of waveforms to combine into a single ETS capture. Must be greater than zero.

      Output parameters:

      status - status code returned by the driver.
      sampleTimePicoSeconds - the effective sampling interval of the ETS data.

      For further information on the ps6000SetEts function please refer to the PicoScope 6000 Series PC Oscilloscopes Programmer's Guide.

  Method ps6000SetEtsTimeBuffer
    MCode:
      function [status, pEtsTimeBuffer] = ps6000SetEtsTimeBuffer(obj, pEtsTimeBuffer)
      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
          deviceObj = get(obj, 'Parent');

          status = calllib('ps6000', 'ps6000SetEtsTimeBuffer', ...
              deviceObj.DriverData.unitHandle, pEtsTimeBuffer, length(pEtsTimeBuffer.Value));

          if (status ~= PicoStatus.PICO_OK)

              error('ps6000SetEtsTimeBuffer: Status code %d. Please refer to the PicoStatus.m file.', status);

          end
    Description: ps6000SetEtsTimeBuffer(obj, pEtsTimeBuffer) tells the driver where to find your application's ETS time buffer.

      The ps6000SetEts function must be called prior to calling this function and this function in turn must be called prior to calling the ps6000GetValues function.

      If no other code needs to be executed prior to the retrieval of the data, call the getEtsBlockData function in place of this and the ps6000GetValues function.

      Input parameters:

      obj - the object representing the Block group.
      pEtsTimeBuffer - a libpointer object corresponding to a 1-D array of 64-bit words, which will represent the time in femtoseconds at which the sample was captured.

      Output parameters:

      status - status code returned by the device.

      For further information on the ps6000SetEtsTimeBuffer function please refer to the PicoScope 6000 Series PC Oscilloscopes Programmer's Guide.

  Method runBlock
    MCode:
      function [status, timeIndisposedMs] = runBlock(obj, segmentIndex)
      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
          deviceObj = get(obj, 'Parent');

          timeIndisposedMs = 0;   % Initialise to pass as pointer.
          overSample = 0;         % OverSampling not needed, please use downsampling
          lpReady = [];           % Set to NULL - Callback function not used.
          pParameter = [];        % Set to NULL - Callback function not used.

          unitHandle = deviceObj.DriverData.unitHandle;
          timebaseIndex = deviceObj.DriverData.timebase;
          preTriggerSamples = deviceObj.DriverData.numPreTriggerSamples;
          postTriggerSamples = deviceObj.DriverData.numPostTriggerSamples;

          if (deviceObj.DriverData.displayOutput == PicoConstants.TRUE)

              fprintf('runBlock:- Collecting block of data:\n\tTimebase: %u\n\tPre-trigger samples: %u\n\tPost-trigger samples: %u\n', ...
                  timebaseIndex, preTriggerSamples, postTriggerSamples);

          end

         [runBlockStatus, timeIndisposedMs] = calllib('ps6000', 'ps6000RunBlock', ...
              unitHandle, preTriggerSamples, postTriggerSamples, ...
              timebaseIndex,overSample, timeIndisposedMs,segmentIndex, lpReady, pParameter);

          if (runBlockStatus ~= PicoStatus.PICO_OK)

              error('runBlock: Error in ps6000RunBlock call - code %d', runBlockStatus);

          end

          if (deviceObj.DriverData.displayOutput == PicoConstants.TRUE)

              fprintf('runBlock: Waiting for device to become ready...\n');

          end

          ready = 0; % Initialise value for pointer

          while(ready == 0)

              [readyStatus, ready] = calllib('ps6000', 'ps6000IsReady', ...
                                      unitHandle, ready);

              if (readyStatus == PicoStatus.PICO_OK || readyStatus == PicoStatus.PICO_BUSY)

                  % Do nothing

              else

                  error('runBlock: Error in ps6000IsReady call - code %d', readyStatus);

              end

          end

          if (deviceObj.DriverData.displayOutput == PicoConstants.TRUE)

              fprintf('runBlock: Device ready.\n\n');

          end

          % Other conditions would have been captured.
          if (runBlockStatus == PicoStatus.PICO_OK && readyStatus == PicoStatus.PICO_OK)

              status = PicoStatus.PICO_OK;

          else

              if(runBlockStatus ~= PicoStatus.PICO_OK)

                  error('runBlock:- ps6000RunBlock error code: %d\n', runBlockStatus);

              else

                  error('runBlock:- ps6000IsReady error code: %d\n', readyStatus);

              end

          end;
    Description: runBlock(obj, segmentIndex) starts collecting data in block mode and returns when the device is ready for data to be collected.

      Input parameters:

      obj - the object representing the Block group.
      segmentIndex - zero-based index, specifying which memory segment to use. Set this parameter to 0, if memory has not been segmented.

      Output parameters:

      status - 0 if the ps6000RunBlock and ps6000IsReady functions have been executed correctly. 

      For further information on the  ps6000RunBlock and ps6000IsReady functions please refer to the PicoScope 6000 Series PC Oscilloscopes Programmer's Guide.

Group rapidblock
  Description: The Rapidblock group contains a set of properties and functions related to the rapid block data collection functionality of the device.
  Size: 1
  Mappings ChannelMap Command="rapidblock" Index="1"

  Method getRapidBlockData
    MCode:
      function [numSamples, overflow, channelA, channelB, channelC, channelD] = getRapidBlockData(obj, numCaptures, ratio, ratioMode)
      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
          % Check ratio mode is not aggregated
          if (ratioMode ~= evalin('base', 'ps6000Enuminfo.enPS6000RatioMode.PS6000_RATIO_MODE_AGGREGATE'))

              deviceObj = get(obj, 'Parent');
              unitHandle = deviceObj.DriverData.unitHandle;

              channelCount = deviceObj.DriverData.channelCount;

              % Retrieve channel settings - channel x data field matrix
              channelSettings = deviceObj.DriverData.channelSettings;

              % Create empty arrays for channel data.
              channelA = [];
              channelB = [];
              channelC = [];
              channelD = [];

              % Initialise variable for array of libpointers
              pBuffer(channelCount, numCaptures) = libpointer;

              % Initialise array for status values
              setBufferStatus = zeros(channelCount, numCaptures, 'uint32');

              % Total number of samples to set for data buffers, taking into
              % account the downsampling ratio
              totalSamples = ceil((deviceObj.DriverData.numPreTriggerSamples + ...
                                      deviceObj.DriverData.numPostTriggerSamples)/ratio);

              % Create a 2D matrix of libpointers to allocate memory space for
              % each channel and segment combination
              for segment = 1:numCaptures

                  for ch = 1:channelCount

                      % Set Data Buffer if channel is enabled
                      if(channelSettings(ch, 1) == PicoConstants.TRUE)

                          % Store array of libpointers
                          pBuffer(ch, segment) = libpointer('int16Ptr', zeros(totalSamples, 1, 'int16'));

                          setBufferStatus(ch, segment) = calllib('ps6000', 'ps6000SetDataBufferBulk', ...
                              unitHandle, (ch - 1), pBuffer(ch, segment), totalSamples, ...
                              (segment - 1), ratioMode);

                          if (setBufferStatus(ch, segment) ~= PicoStatus.PICO_OK)

                              error('getRapidBlockData: Set Data Buffer for Channel %d Segment % error code %d', ...
                                  (ch - 1), (segment - 1), setBufferStatus);

                          end

                      end

                  end

              end

              if (deviceObj.DriverData.displayOutput == PicoConstants.TRUE)

                  fprintf('getRapidBlockData: Retrieving data...\n');

              end

              fromSegmentIndex = 0;
              toSegmentIndex = numCaptures - 1;

              overflowSize = (toSegmentIndex - fromSegmentIndex) + 1;
              overflowPtr = libpointer('int16Ptr', zeros(overflowSize, 1, 'int16'));
              overflow = 0;

              % Call ps6000GetValuesBulk
              [getValuesBulkStatus, numSamples] = calllib('ps6000', ...
                  'ps6000GetValuesBulk', unitHandle, totalSamples, fromSegmentIndex, ...
                  toSegmentIndex, ratio, ratioMode, overflowPtr);

              overflow = overflowPtr.Value;

              if (getValuesBulkStatus == PicoStatus.PICO_OK)

                  if (deviceObj.DriverData.displayOutput == PicoConstants.TRUE)

                      fprintf('getRapidBlockData: Converting to milliVolts and assigning to channel array.\n');

                  end

                  % Obtain max ADC count value
                  maxADCValue = double(deviceObj.DriverData.maxADCValue);

                  % Retrieve data values for enabled channels
                  for ch = 1:channelCount

                      if (channelSettings(ch,1) == PicoConstants.TRUE)

                          scopeInputIndex = channelSettings(ch, 3) + 1;
                          voltageRange = PicoConstants.SCOPE_INPUT_RANGES(scopeInputIndex);

                          % Obtain a cell array representing the waveforms for
                          % the channel

                          bufferCell = get(pBuffer(ch, :), 'Value');

                          % Combine the cell contents into a total_samples x
                          % numCaptures array

                          bufferMatrix = [];

                          if (numCaptures > 1)

                              bufferMatrix = horzcat(bufferCell{1:end});

                          else

                              bufferMatrix = bufferCell;

                          end

                          bufferValues = adc2mv(bufferMatrix, voltageRange, ...
                              maxADCValue);

                          switch(ch - 1)

                              case evalin('base', 'ps6000Enuminfo.enPS6000Channel.PS6000_CHANNEL_A')

                                  channelA = bufferValues;

                              case evalin('base', 'ps6000Enuminfo.enPS6000Channel.PS6000_CHANNEL_B')

                                  channelB = bufferValues;

                              case evalin('base', 'ps6000Enuminfo.enPS6000Channel.PS6000_CHANNEL_C')

                                  channelC = bufferValues;

                              case evalin('base', 'ps6000Enuminfo.enPS6000Channel.PS6000_CHANNEL_D')

                                  channelD = bufferValues;

                              otherwise

                                  % Do nothing

                          end

                          clear bufferCell;
                          clear bufferMatrix;
                          clear bufferValues;

                      end

                  end

                  if (deviceObj.DriverData.displayOutput == PicoConstants.TRUE)

                      fprintf('getRapidBlockData: Data succesfully retrieved.\n\n');

                  end

                  clear pBuffer;

              else

                  error('getRapidBlockData: Error retrieving data values - code: %d', getValuesBulkStatus);

              end

          else

              error('getRapidBlockData: Aggregate Mode data collection not supported by this function.');

          end
    Description: getRapidBlockData(obj, numCaptures, ratio, ratioMode) retrieves waveforms captured using rapid block mode. The waveforms must have been collected sequentially and in the same run.

      Memory for the data arrays from segment index 0 to numCaptures - 1 is allocated and the driver is informed where to store the data prior to retrieval. Data collection in Aggregation mode or with more than one downsampling mode  is NOT supported by this function.

      This function can be used with the Test and Measurement Tool.

      Input parameters:

      obj - the object representing the Rapidblock group.
      numCaptures - the number of waveform captures to retrieve.
      ratio - the downsampling factor that will be applied to the raw data.
      ratioMode - which downsampling mode to use (specified by enumeration from the PS6000_RATIO_MODE set excluding PS6000_RATIO_MODE_AGGREGATE).

      Output parameters:

      status - status code returned by the driver.
      numSamples - the number of samples retrieved from the driver.
      overflow - a set of flags that indicate whether an overvoltage has occurred on any of the channels.
      channelA - an array containing data values (in milliVolts) for channel A.
      channelB - an array containing data values (in milliVolts) for channel B.
      channelC - an array containing data values (in milliVolts) for channel C.
      channelD - an array containing data values (in milliVolts) for channel D.

      Channel data will be returned as an array in the form numSamples x numCaptures. Channels not enabled or not supported by this device will be returned as an empty array.

      Please also refer to the  ps6000SetDataBuffer and ps6000GetValues functions as well as the PicoScope 6000 Series PC Oscilloscopes Programmer's Guide.

  Method getTriggerInfoBulk
    MCode:
      function [status, triggerInfo] = getTriggerInfoBulk(obj, triggerInfo, fromSegmentIndex, toSegmentIndex)
      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
      deviceObj = get(obj, 'Parent');

      pTriggerInfo = libpointer('tPS6000TriggerInfoPtr',triggerInfo);
      %%
      status = calllib('ps6000', 'ps6000GetTriggerInfoBulk', deviceObj.DriverData.unitHandle, pTriggerInfo, fromSegmentIndex, toSegmentIndex);

      if (status ~= PicoStatus.PICO_OK)
          error('Picotech:PS6000InstrumentDriver:ps5000aGetTriggerInfoBulk', ...
                          ['ps6000GetTriggerInfoBulk has returned status code ', ...
                           num2str(status), ' (0x' dec2hex(status), '). Please refer to PicoStatus.m for further information.' ]);
      end

      %%
      triggerInfo(1)=pTriggerInfo.Value;

      for i = 1:(toSegmentIndex-fromSegmentIndex)
          TriggerInfoPtrInc = pTriggerInfo+i;
          triggerInfo(i+1) = TriggerInfoPtrInc.Value;
      end
    Description: getTriggerInfoBulk(obj, triggerInfo, fromSegmentIndex, toSegmentIndex) retrieves the trigger infromation from waveforms captured during a rapid block capture

      Input Parameters

      obj - the device group object
      triggerInfo - structure array of 1 or more MATLAB structures corresponding to the tPS6000TriggerInfo structure (accessable from the PS6000Structs struct)
      fromSegmentIndex - integer relating to the first segement to retrieve trigger data from
      toSegmentIndex - integer relating to the last segment to retrieve tirgger data from

      Function Outputs

      status - status code returned by the device.
      triggerInfo -  structure array of 1 or more MATLAB structures corresponding to the tPS6000TriggerInfo structure (accessable from the PS6000Structs struct) that has been populated with the trigger info data

  Method ps6000GetNoOfCaptures
    MCode:
      function [status, nCaptures] = ps6000GetNoOfCaptures(obj)
      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
          deviceObj = get(obj, 'Parent');
          unitHandle = deviceObj.DriverData.unitHandle;

          nCaptures = 0; % Value for pointer.

          [status, nCaptures] = calllib('ps6000', 'ps6000GetNoOfCaptures', ...
                                  unitHandle, nCaptures);

          if(status ~= PicoStatus.PICO_OK)

              error('ps6000GetNoOfCaptures: Status code: %d. Please refer to the PicoStatus.m file.', status);

          end
    Description: ps6000GetNoOfCaptures(obj) finds out how many captures are available in rapid block mode after runBlock has been called when either the collection completed or the collection of waveforms was interrupted by calling ps6000Stop.

      This function may be used with the Test and Measurement Tool.

      Input parameters:

      obj - the object representing the Rapidblock group.

      Output parameters:

      status - status code returned by the driver.
      nCaptures - the number of available captures that has been collected from calling runBlock.

      For further information on the ps6000GetNoOfCaptures function please refer to the PicoScope 6000 Series PC Oscilloscopes Programmer's Guide.

  Method ps6000GetValuesBulk
    MCode:
      function [status, numSamples, overflow] = ps6000GetValuesBulk(obj, noOfSamples, fromSegmentIndex, toSegmentIndex, downSampleRatio, downSampleRatioMode)
      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
          deviceObj = get(obj, 'Parent');
          unitHandle = deviceObj.DriverData.unitHandle;

          % overflow must be an array
          overflowSize = (toSegmentIndex - fromSegmentIndex) + 1;
          overflowPtr = libpointer('int16Ptr', zeros(overflowSize, 1));
          overflow = 0;

          [status, numSamples] = calllib('ps6000', 'ps6000GetValuesBulk', ...
              unitHandle, noOfSamples, fromSegmentIndex, toSegmentIndex, ...
              downSampleRatio, downSampleRatioMode, overflowPtr);

          if(status == PicoStatus.PICO_OK)

              overflow = get(overflowPtr, 'Value');

          else

              error('ps6000GetValuesBulk: Status code: %d. Please refer to the PicoStatus.m file.', status);

          end
    Description: ps6000GetValuesBulk(obj, noOfSamples, fromSegmentIndex, toSegmentIndex, downSampleRatio, downSampleRatioMode) retrieves waveforms captured using rapid block mode.

      Input parameters:

      obj - the object representing the Rapidblock group.
      noOfSamples - the number of samples required.
      fromSegmentIndex - the first segment from which the waveform should be retrieved.
      toSegmentIndex - the last segment from which the waveform should be retrieved.
      downSampleRatio - the downsampling factor that will be applied to the raw data.
      downSampleRatioMode - which downsampling mode to use (specified by enumeration).

      Output parameters:

      status - status code returned by the driver.
      numSamples - the actual number retrieved from the driver.
      overflow - an array of integers equal to or larger than the number of waveforms to be retrieved with each element corresponding to an overlow value as described in the ps6000GetValues function.

      For further information on the ps6000GetValuesBulk function please refer to the PicoScope 6000 Series PC Oscilloscopes Programmer's Guide.

  Method ps6000SetDataBufferBulk
    MCode:
      function status =  ps6000SetDataBufferBulk(obj, channel, pBuffer,bufferLth, segmentIndex, ratioMode)
      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
          status = calllib('ps6000', 'ps6000SetDataBufferBulk', ...
              obj.DriverData.unitHandle, channel, pBuffer, bufferLth, segmentIndex, ratioMode);

          if(status ~= PicoStatus.PICO_OK)

              error('ps6000SetDataBufferBulk: error code %d', status);

          end
    Description: ps6000SetDataBufferBulk(obj, channel, pBuffer,bufferLth, segmentIndex, ratioMode) tells the driver where to store the data, either unprocessed or downsampled, that will be returned after the next call to one of the GetValues functions.

      Input parameters:

      obj - the object representing the device.
      channel - the channel to which the buffer corresponds (an enumeration from the PS6000_CHANNEL range).
      pBuffer - a libpointer to a 1-D array to receive the data values for the channel.
      bufferLth - the length of the buffer array.
      segmentIndex - the number of the memory segment to be used.
      mode - the downsampling mode (an enumeration from the PS6000_RATIO_MODE range).

      Output parameters:

      status - status code returned by the device.

      If want to return all buffer simultaneously please call ps6000GetValuesBulk.

      For further information on the ps6000SetDataBuffer function please refer to the PicoScope 6000 Series PC Oscilloscopes Programmer's Guide.

  Method ps6000SetDataBuffersBulk
    MCode:
      function status =  ps6000SetDataBuffersBulk(obj, channel, pBufferMax, pBufferMin, bufferLth, segmentIndex, ratioMode)
      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
          status = calllib('ps6000', 'ps6000SetDataBuffersBulk', ...
              obj.DriverData.unitHandle, channel, pBufferMax, pBufferMin, ...
              bufferLth, segmentIndex, ratioMode);

          if(status ~= PicoStatus.PICO_OK)

              error('ps6000SetDataBuffersBulk: error code %d', status);

          end
    Description: ps6000SetDataBuffersBulk(obj, channel, pBufferMax, pBufferMin, bufferLth, segmentIndex, ratioMode)tells the driver the location of one or two buffers for receiving data.

      If aggregate mode is not being used, then ps6000SetDataBufferBulk can optionally be used instead.

      Input parameters:

      obj - the object representing the device.
      channel -  the channel for which to set the buffers (an enumeration from the PS6000_CHANNEL range).
      pBufferMax - a libpointer to a 1-D array to receive the maximum data values in aggregation mode, or the non-aggregated values otherwise.
      pBufferMin -  a libpointer to a 1-D array to receive the minimum aggregated data values. Not used in other downsampling modes.
      bufferLth - the size of the arrays to which pBufferMax and pBufferMin are pointers.
      segmentIndex - the number of the memory segment to be used.
      mode - the downsampling mode to use (an enumeration from the PS6000_RATIO_MODE range).

      Output parameters:

      status - status code returned by the device.

      If want to return all buffer simultaneously please call ps6000GetValuesBulk

      For further information on the ps6000SetDataBuffersBulk function please refer to the PicoScope 6000 Series PC Oscilloscopes Programmer's Guide.

  Method ps6000SetNoOfCaptures
    MCode:
      function status = ps6000SetNoOfCaptures(obj, nCaptures)
      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
          deviceObj = get(obj, 'Parent');
          unitHandle = deviceObj.DriverData.unitHandle;

          status = calllib('ps6000', 'ps6000SetNoOfCaptures', ...
              unitHandle', nCaptures);

          if(status ~= PicoStatus.PICO_OK)

              error('ps6000SetNoOfCaptures: Status code: %d. Please refer to the PicoStatus.m file.', status);

          end
    Description: ps6000SetNoOfCaptures(obj, nCaptures) sets the number of captures to be collected in one run of rapid block mode.

      If this function is not called prior to a run, only a single waveform will be captured.

      This function may be used with the Test and Measurement Tool.

      Input parameters:

      obj - the object representing the Rapidblock group.
      nCaptures - the number of waveforms to capture in one run.

      Output parameters:

      status - status code returned by the device.

      For further information on the ps6000SetNoOfCaptures function please refer to the PicoScope 6000 Series PC Oscilloscopes Programmer's Guide.

Group signalgenerator
  Description: The Signalgenerator group contains a set of properties and functions related to the signal generator functionality of the device.
  Size: 1
  Mappings ChannelMap Command="signalgenerator" Index="1"

  Property awgBufferSize
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
          deviceObj = get(obj, 'Parent');

           % If awgBufferSize doesn't exist, create it.
          if ( ~isfield(deviceObj.DriverData, 'awgBufferSize') )
              deviceObj.DriverData.awgBufferSize = 0;
          end

          propertyValue = deviceObj.DriverData.awgBufferSize;
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    PermissibleType: Double bounded [Max="16384.0" Min="0.0"]
    DefaultValue: 16384
    ReadOnly: always
    Description: The size of the arbitrary waveform buffer on the device, in samples.

  Property dacFrequency
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
          deviceObj = get(obj, 'Parent');

           % If dacFrequency doesn't exist, create it.
          if ( ~isfield(deviceObj.DriverData, 'dacFrequency') )
              deviceObj.DriverData.dacFrequency = 200e6;
          end

          propertyValue = deviceObj.DriverData.dacFrequency;
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    PermissibleType: Double bounded [Max="8.0E7" Min="0.0"]
    DefaultValue: 80E6
    ReadOnly: always
    Description: The update frequency of the Arbitrary Waveform Generator (MS/s or MHz).

  Property offsetVoltage
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
          deviceObj = get(obj, 'Parent');

           % If offsetVoltage doesn't exist, create it.
          if ( ~isfield(deviceObj.DriverData, 'offsetVoltage') )
              deviceObj.DriverData.offsetVoltage = 0;
          end

          propertyValue = deviceObj.DriverData.offsetVoltage;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
          deviceObj = get(obj, 'Parent');
          deviceObj.DriverData.offsetVoltage = propertyValue;
    PermissibleType: Double bounded [Max="2000.0" Min="-2000.0"]
    DefaultValue: 0
    ReadOnly: never
    Description: The voltage offset, in milliVolts, to be applied to the waveform.

      The sum of the offset voltage and peak to peak voltage should not exceed +/- 4000mV.

  Property peakToPeakVoltage
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
          deviceObj = get(obj, 'Parent');

           % If peakToPeakVoltage doesn't exist, create it.
          if ( ~isfield(deviceObj.DriverData, 'peakToPeakVoltage') )
              deviceObj.DriverData.peakToPeakVoltage = 0;
          end

          propertyValue = deviceObj.DriverData.peakToPeakVoltage;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
          deviceObj = get(obj, 'Parent');
          deviceObj.DriverData.peakToPeakVoltage = propertyValue;
    PermissibleType: Double bounded [Max="4000.0" Min="0.0"]
    DefaultValue: 2000
    ReadOnly: never
    Description: The peak-to-peak voltage, in millivolts, of the waveform signal.

      The sum of the peak to peak voltage and offset voltage should not exceed +/- 4000mV.

  Property sigGenType
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
          deviceObj = get(obj, 'Parent');

           % If sigGenType doesn't exist, create it.
          if ( ~isfield(deviceObj.DriverData, 'sigGenType') )
              deviceObj.DriverData.sigGenType = [ ];
          end

          propertyValue = deviceObj.DriverData.sigGenType;
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    PermissibleType: Double enum [0.0, 1.0, 2.0]
    DefaultValue: 0.0
    ReadOnly: always
    Description: The type of Signal Generator on the device:

      0 - None
      1 - Function Generator
      2 - Arbitrary Waveform Generator

  Property startFrequency
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
          deviceObj = get(obj, 'Parent');

           % If startFrequency doesn't exist, create it.
          if ( ~isfield(deviceObj.DriverData, 'startFrequency') )
              deviceObj.DriverData.startFrequency = [ ];
          end

          propertyValue = deviceObj.DriverData.startFrequency;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
          deviceObj = get(obj, 'Parent');
          deviceObj.DriverData.startFrequency = propertyValue;
    PermissibleType: Double bounded [Max="2.0E7" Min="0.0"]
    DefaultValue: 1000
    ReadOnly: never
    Description: The frequency that the signal generator will initially produce (Hertz).

  Property stopFrequency
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
          deviceObj = get(obj, 'Parent');

           % If stopFrequency doesn't exist, create it.
          if ( ~isfield(deviceObj.DriverData, 'stopFrequency') )
              deviceObj.DriverData.stopFrequency = [ ];
          end

          propertyValue = deviceObj.DriverData.stopFrequency;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
          deviceObj = get(obj, 'Parent');
          deviceObj.DriverData.stopFrequency = propertyValue;
    PermissibleType: Double bounded [Max="2.0E7" Min="0.0"]
    DefaultValue: 1000
    ReadOnly: never
    Description: The frequency at which the sweep reverses direction or returns to the initial frequency (Hertz).

      To output a signal with constant frequency, ensure that stopFrequency is equal to startFrequency.

  Method ps6000SigGenSoftwareControl
    MCode:
      function status = ps6000SigGenSoftwareControl(obj, state)
      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
          deviceObj = get(obj, 'Parent');

          status = calllib('ps6000', 'ps6000SigGenSoftwareControl', ...
                      deviceObj.DriverData.unitHandle, state);

      	if(status ~= PicoStatus.PICO_OK)

              error('ps6000SigGenSoftwareControl: Status code: %d. Please refer to the PicoStatus.m file.', status);

          end
    Description: ps6000SigGenSoftwareControl(obj, state) causes a trigger event, or starts and stops gating.

      This function may be used with the Test and Measurement Tool.

      Input parameters:

      obj - the object representing the Signalgenerator group.
      state - sets the trigger gate high or low when the trigger type is set to either SIGGEN_GATE_HIGH or SIGGEN_GATE_LOW.

      Output parameters:

      status - status code returned by the driver.

      For further information on the ps6000SigGenSoftwareControl function please refer to the PicoScope 6000 Series PC Oscilloscopes Programmer's Guide.

  Method setSigGenArbitrary
    MCode:
      function [status, dwellTime] = setSigGenArbitrary(obj, increment, dwellTime, arbitraryWaveform, sweepType, operation, indexMode, shots, sweeps, triggerType, triggerSource, extInThresholdMV)
      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
          deviceObj = get(obj, 'Parent');
          startDeltaPhase = 0;
          stopDeltaPhase = 0;
          dwellCount = 0;

          % Only call function if device has an Arbitrary Waveform Generator
          if(get(obj, 'sigGenType') == PicoConstants.SIG_GEN_AWG)

              offsetVoltageUV = deviceObj.DriverData.offsetVoltage * 1e3;
              peakToPeakVoltageUV = deviceObj.DriverData.peakToPeakVoltage * 1e3;

              if(abs(offsetVoltageUV + peakToPeakVoltageUV) > 4000000)

                  error('setSigGenBuiltInSimple: The sum of offsetVoltage and peakToPeakVoltage cannot exceed +/-4000mV.');

              end

              dacFrequency = get(obj, 'dacFrequency');

              % Convert the waveform to the range for the driver.
              % Values need to be adjusted to the range 0 -> 4095 due to the
              % 12-bit DAC.

              arbitraryWave = int16((arbitraryWaveform + 1)/2 * 4095);

              startFrequency = get(obj, 'startFrequency');

              [status, startDeltaPhase] = calllib('ps6000', 'ps6000SigGenFrequencyToPhase', ...
                                        deviceObj.DriverData.unitHandle, ...
                                        startFrequency, indexMode, ...
                                        length(arbitraryWave),startDeltaPhase);

              % No need to calculate stop delta phase if start and stop frequencies
              % are the same.

              stopFrequency = get(obj, 'stopFrequency');

              if(stopFrequency == startFrequency)

                  stopDeltaPhase = startDeltaPhase;

              else

                  [status, stopDeltaPhase] = calllib('ps6000', 'ps6000SigGenFrequencyToPhase', ...
                                deviceObj.DriverData.unitHandle, ...
                                stopFrequency, indexMode, ...
                                length(arbitraryWave), stopDeltaPhase);
              end

              %fprintf('setSigGenArbitrary:Stop delta phase: %d\n', stop_delta_phase);

              deltaPhaseincrement = 0;

              [status, deltaPhaseIncrement] = calllib('ps6000', 'ps6000SigGenFrequencyToPhase', ...
                                                  deviceObj.DriverData.unitHandle, ...
                                                  increment, indexMode, ...
                                                  length(arbitraryWave),deltaPhaseincrement);

              dwellCount = round(dwellTime * dacFrequency); % Round to the nearest integer

              if(dwellCount < PS6000Constants.MIN_DWELL_COUNT)

                  dwellCount = PS6000Constants.MIN_DWELL_COUNT;

              end

              % Return dwell time information to the user if it has been
              % modified.
              dwellTime = dwellCount / dacFrequency;

              % Convert extInThreshold to ADC counts

              auxInRange = 1000; % Aux Input uses +/- 1V range

              extInThreshold = mv2adc(extInThresholdMV, auxInRange, ...
                  PS6000Constants.PS6000_MAX_AUX_IN_VALUE);

              status = calllib('ps6000', 'ps6000SetSigGenArbitrary', ...
                          deviceObj.DriverData.unitHandle, ...
                          offsetVoltageUV, peakToPeakVoltageUV, startDeltaPhase, ...
                          stopDeltaPhase, deltaPhaseIncrement, dwellCount, arbitraryWave, ...
                          length(arbitraryWave), sweepType, operation, indexMode, shots, ...
                          sweeps, triggerType, triggerSource, extInThreshold);

              % Output error message to user if status is not PICO_OK
              if(status ~= PicoStatus.PICO_OK)

                  switch(status)

                      case PicoStatus.PICO_SIG_GEN_PARAM

                          error('setSigGenArbitrary: Incorrect parameter passed to the signal generator.');

                      case PicoStatus.PICO_SHOTS_SWEEPS_WARNING

                          error('setSigGenArbitrary: Incorrect parameter passed to the signal generator.');

                      case PicoStatus.PICO_SIGGEN_OUTPUT_OVER_VOLTAGE

                          error('setSigGenArbitrary: The combined peak to peak voltage and the analog offset voltage must be in the range 0 -> +/- 2V');

                      case PicoStatus.PICO_WARNING_EXT_THRESHOLD_CONFLICT

                          error('setSigGenArbitrary: Attempt to set different EXT input thresholds set for signal generator and oscilloscope trigger.');

                      case PicoStatus.PICO_SIGGEN_OFFSET_VOLTAGE

                          error('setSigGenArbitrary: The analog offset voltage is out of range.');

                      case PicoStatus.PICO_SIGGEN_PK_TO_PK

                          error('setSigGenArbitrary: The analog peak to peak voltage must be in the range 0 -> +/- 2V.');

                      case PicoStatus.PICO_SIGGEN_WAVEFORM_SETUP_FAILED

                          error('setSigGenArbitrary: Unable to setup signal generator waveform.');

                      otherwise

                          error('setSigGenArbitrary: Status code: %d. Please refer to the PicoStatus.m file.', status);
                  end

              end

              clear offsetVoltageUV
              clear peakToPeakVoltageUV
              clear maxBufferSize
              clear dacFrequency
              clear arbitraryWave
              clear startDeltaPhase
              clear stopDeltaPhase
              clear dwellCount
              clear deltaPhaseIncrement
              clear startFrequency;
              clear stopFrequency;

          else

              error('AWG functionality not supported by this device.');

          end
    Description: setSigGenArbitrary(obj, increment, dwellTime, arbitraryWaveform, sweepType, operation, indexMode, shots, sweeps, triggerType, triggerSource, extInThreshold) programs the signal generator to produce an arbitrary waveform.

      The startFrequency, stopFrequency, offsetVoltage and peakToPeakVoltage properties must be set prior to calling this function, otherwise the default values will be used.

      This function may be used with the Test and Measurement Tool.

      Input parameters:

      obj - the object representing the Signalgenerator group.
      increment - the increase or decrease in frequency when operating in sweep mode.
      dwellTime - the time for which the sweep stays at each frequency, in seconds.
      arbitraryWaveform -  a buffer that holds the waveform pattern as a set of samples in the range -1 to +1. These values correspond to the 	                                   maximum and minimum amplitude values of the waveform.
      sweepType -  determines whether the startFrequency is swept up to the stopFrequency, or down to it, or repeatedly up and down.
      operation - configures the white noise/PRBS (pseudo-random binary sequence) generator.
      indexMode - specifies how the signal will be formed from the arbitrary waveform data.
      shots - the number of cycles of the waveform to be produced after a trigger event. If this is set to a non-zero value 
      	then sweeps must be set to zero.
      sweeps - the number of times to sweep the frequency after a trigger event, according to sweepType. If this is set to a non-zero value 
      		then shots must be set to zero.
      triggerType - the type of trigger that will be applied to the signal generator.
      triggerSource - the source that will trigger the signal generator.
      extInThresholdMV -  the threshold voltage (millivolts) on the AUX input when used as a trigger source.

      Output parameters:

      status - status code returned by the driver.
      dwellTime -  the dwell time will be modified if the user specifies a dwell time (125e-9) corresponding to less than the minimum dwell count for the device (10).

      For further information on the ps6000SetSigGenArbitrary function please refer to the PicoScope 6000 Series PC Oscilloscopes.

  Method setSigGenArbitrarySimple
    MCode:
      function status = setSigGenArbitrarySimple(obj, arbitraryWaveform)
      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
          deviceObj = get(obj, 'Parent');
          startDeltaPhase =0;
          single =  evalin('base', 'ps6000Enuminfo.enPS6000IndexMode.PS6000_SINGLE');

          % Only call function if device has an Arbitrary Waveform Generator
          if(get(obj, 'sigGenType') == PicoConstants.SIG_GEN_AWG)

              % Convert voltages to microvolts
              offsetVoltageUV = deviceObj.DriverData.offsetVoltage * 1e3;
              peakToPeakVoltageUV = deviceObj.DriverData.peakToPeakVoltage * 1e3;

              if(abs(offsetVoltageUV + peakToPeakVoltageUV) > 4000000)

                  error('setSigGenArbitrarySimple: The sum of offsetVoltage and peakToPeakVoltage cannot exceed +/-4000mV.');

              end

              % Convert the waveform to the range for the driver.
              % Values need to be adjusted to the range 0 -> 4095 due to the
              % 12-bit DAC.
              arbitraryWave = int16((arbitraryWaveform + 1)/2 * 4095);

              [status, startDeltaPhase] = calllib('ps6000', 'ps6000SigGenFrequencyToPhase', ...
                                        deviceObj.DriverData.unitHandle, ...
                                        obj.startFrequency, single, ...
                                        length(arbitraryWave),startDeltaPhase);

              % Constant frequency
              stopDeltaPhase = startDeltaPhase;

              status = calllib('ps6000', 'ps6000SetSigGenArbitrary', ...
                          deviceObj.DriverData.unitHandle, offsetVoltageUV, ...
                          peakToPeakVoltageUV, startDeltaPhase, ...
                          stopDeltaPhase, 0, 0, arbitraryWave, ...
                          length(arbitraryWave), 0, 0, 0, 0, 0, 0, 0, 0);

              % Output error message to user if status is not PICO_OK
              if(status ~= PicoStatus.PICO_OK)

                  switch(status)

                      case PicoStatus.PICO_SIG_GEN_PARAM

                          error('setSigGenArbitrary: Incorrect parameter passed to the signal generator.');

                      case PicoStatus.PICO_SHOTS_SWEEPS_WARNING

                          error('setSigGenArbitrary: Incorrect parameter passed to the signal generator.');

                      case PicoStatus.PICO_SIGGEN_OUTPUT_OVER_VOLTAGE

                          error('setSigGenArbitrary: The combined peak to peak voltage and the analog offset voltage must be in the range 0 -> +/- 2V');

                      case PicoStatus.PICO_WARNING_EXT_THRESHOLD_CONFLICT

                          error('setSigGenArbitrary: Attempt to set different EXT input thresholds set for signal generator and oscilloscope trigger.');

                      case PicoStatus.PICO_SIGGEN_OFFSET_VOLTAGE

                          error('setSigGenArbitrary: The analog offset voltage is out of range.');

                      case PicoStatus.PICO_SIGGEN_PK_TO_PK

                          error('setSigGenArbitrary: The analog peak to peak voltage must be in the range 0 -> +/- 2V.');

                      case PicoStatus.PICO_SIGGEN_WAVEFORM_SETUP_FAILED

                          error('setSigGenArbitrary: Unable to setup signal generator waveform.');

                      otherwise

                          error('setSigGenArbitrarySimple: Status code: %d. Please refer to the PicoStatus.m file.', status);
                  end

              end

          else

              error('AWG functionality not supported by this device.');

          end
    Description: setSigGenArbitrary(obj, arbitraryWaveform) programs the signal generator to produce an arbitrary waveform at a constant frequency.

      The startFrequency, stopFrequency, offsetVoltage and peakToPeakVoltage properties must be set prior to calling this function, otherwise the default values will be used.

      This function may be used with the Test and Measurement Tool.

      Input parameters:

      obj - the object representing the Signalgenerator group.
      arbitraryWaveform -  a buffer that holds the waveform pattern as a set of samples in the range -1 to +1. These values correspond to the 	maximum and minimum amplitude values of the waveform.

      Output parameters:

      status - status code returned by the driver.

      For further information on the ps6000SetSigGenArbitrary function please refer to the PicoScope 6000 Series PC Oscilloscopes Programmer's Guide.

  Method setSigGenBuiltIn
    MCode:
      function status = setSigGenBuiltIn(obj, waveType, increment, dwellTime, sweepType, operation, shots, sweeps, triggerType, triggerSource, extInThresholdMV)
      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
          deviceObj = get(obj, 'Parent');
          sigGenType = get(obj, 'sigGenType');

          % Error checking
          if(sigGenType == PicoConstants.SIG_GEN_AWG || ...
                  sigGenType == PicoConstants.SIG_GEN_FUNCT_GEN)

              % Convert millivolt values to microvolts
              offsetVoltageUV = deviceObj.DriverData.offsetVoltage * 1e3;
              peakToPeakVoltageUV = deviceObj.DriverData.peakToPeakVoltage * 1e3;

              if(abs(offsetVoltageUV + peakToPeakVoltageUV) > 4000000)

                  error('setSigGenBuiltInSimple: The sum of offsetVoltage and peakToPeakVoltage cannot exceed +/-4000mV.');

              end

              % Convert extInThreshold to ADC counts

              auxInRange = 1000; % Aux Input uses +/- 1V range

              extInThreshold = mv2adc(extInThresholdMV, auxInRange, ...
                  PS6000Constants.PS6000_MAX_AUX_IN_VALUE);

              status = calllib('ps6000', 'ps6000SetSigGenBuiltInV2', deviceObj.DriverData.unitHandle, ...
                          offsetVoltageUV, peakToPeakVoltageUV, waveType, ...
                          deviceObj.DriverData.startFrequency, deviceObj.DriverData.stopFrequency, ...
                          increment, dwellTime, sweepType, operation, shots, sweeps, ...
                          triggerType, triggerSource, extInThreshold);

              % Output error message to user if status is not PICO_OK
              if(status ~= PicoStatus.PICO_OK)

                  switch(status)

                      case PicoStatus.PICO_SIG_GEN_PARAM

                          error('setSigGenBuiltIn: One or more signal generator parameters are out of range.');

                      case PicoStatus.PICO_SHOTS_SWEEPS_WARNING

                          error('setSigGenBuiltIn: Shots/sweeps warning.');

                      case PicoStatus.PICO_SIGGEN_OUTPUT_OVER_VOLTAGE

                          error('setSigGenBuiltIn: The combined peak to peak voltage and the analog offset voltage must be in the range 0 -> +/- 2V');

                      case PicoStatus.PICO_SIGGEN_OFFSET_VOLTAGE

                          error('setSigGenBuiltIn: The analog offset voltage is out of range.');

                      case PicoStatus.PICO_SIGGEN_PK_TO_PK

                          error('setSigGenBuiltIn: The analog peak to peak voltage must be in the range 0 -> +/- 2V.');

                      case PicoStatus.PICO_SIGGEN_WAVEFORM_SETUP_FAILED

                          error('setSigGenBuiltIn: Unable to setup signal generator waveform.');

                      otherwise

                          error('setSigGenBuiltIn: Status code: %d. Please refer to the PicoStatus.m file.', status);
                  end

              end

              clear offsetVoltage;
              clear peakToPeakVoltage;
              clear sigGenType;

          else

              error('setSigGenBuiltIn: Signal Generator functionality not supported by this device.');

          end
    Description: setSigGenBuiltIn(obj, waveType, increment, dwellTime, sweepType, operation, shots, sweeps, triggerType, triggerSource) sets up the signal generator to produce a signal from a list of built-in waveforms.

      The startFrequency, stopFrequency, offsetVoltage and peakToPeakVoltage properties must be set prior to calling this function otherwise the default values will be used.

      This function may be used with the Test and Measurement Tool.

      Input parameters:

      obj - the object representing the Signalgenerator group.
      wavetype - the type of waveform to be generated by the oscilloscope. Use the following waveType enumerations:

      		0 - SINE
      		1 - SQUARE
      		2 - TRIANGLE
      		3 - RAMP UP
      		4 - RAMP DOWN
      		5 - SINC
      		6 - GAUSSIAN
      		7 - HALF SINE
      		8 - DC VOLTAGE
      		9 - WHITE NOISE

      increment - the amount in hertz by which the frequency rises or falls every dwellTime seconds in sweep mode.
      dwellTime - the time in seconds between frequency changes in sweep mode.
      sweepType - determines whether the startFrequency is swept up to the stopFrequency, or down to it, or repeatedly up and down.
      operation - configures the white noise/PRBS (pseudo-random binary sequence) generator.
      shots - the number of cycles of the waveform to be produced after a trigger event. If this is set to a non-zero value 
      		then sweeps must be set to zero.
      sweeps - the number of times to sweep the frequency after a trigger event, according to sweepType. If this is set to a non-zero 	value then shots must be set to zero.
      triggerType - the type of trigger that will be applied to the signal generator.
      triggerSource - the source that will trigger the signal generator.
      extInThresholdMV - the threshold voltage (millivolts) on the AUX input when used as a trigger source.

      Output parameters:

      status - status code returned by the driver.

      For further information on the ps6000SetSigGenBuiltIn function please refer to the PicoScope 6000 Series PC Oscilloscopes Programmer's Guide.

  Method setSigGenBuiltInSimple
    MCode:
      function status = setSigGenBuiltInSimple(obj, waveType)
      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
          deviceObj = get(obj, 'Parent');
          sigGenType = get(obj, 'sigGenType');

          % Error checking
          if(sigGenType == PicoConstants.SIG_GEN_AWG || ...
                  sigGenType == PicoConstants.SIG_GEN_FUNCT_GEN)

              % Convert millivolt values to microvolts
              offsetVoltageUV = deviceObj.DriverData.offsetVoltage * 1e3;
              peakToPeakVoltageUV = deviceObj.DriverData.peakToPeakVoltage * 1e3;

              if(abs(offsetVoltageUV + peakToPeakVoltageUV) > 4000000)

                  error('setSigGenBuiltInSimple: The sum of offsetVoltage and peakToPeakVoltage cannot exceed +/-4000mV.');

              end

              status = calllib('ps6000', 'ps6000SetSigGenBuiltInV2', deviceObj.DriverData.unitHandle, ...
                          offsetVoltageUV, peakToPeakVoltageUV, waveType, ...
                          deviceObj.DriverData.startFrequency, deviceObj.DriverData.startFrequency, ...
                              0, 0, 0, 0, 0, 0, 0, 0, 0);

              % Output error message to user if status is not PICO_OK
              if(status ~= PicoStatus.PICO_OK)

                  switch(status)

                      case PicoStatus.PICO_SIG_GEN_PARAM

                          error('setSigGenBuiltInSimple: One or more signal generator parameters are out of range.');

                      case PicoStatus.PICO_SHOTS_SWEEPS_WARNING

                          error('setSigGenBuiltInSimple: Shots/sweeps warning.');

                      case PicoStatus.PICO_SIGGEN_OUTPUT_OVER_VOLTAGE

                          error('setSigGenBuiltInSimple: The combined peak to peak voltage and the analog offset voltage must be in the range 0 -> +/- 2V');

                      case PicoStatus.PICO_WARNING_EXT_THRESHOLD_CONFLICT

                          error('setSigGenBuiltInSimple: External threshold conflict.');

                      case PicoStatus.PICO_SIGGEN_OFFSET_VOLTAGE

                          error('setSigGenBuiltInSimple: The analog offset voltage is out of range.');

                      case PicoStatus.PICO_SIGGEN_PK_TO_PK

                          error('setSigGenBuiltInSimple: The analog peak to peak voltage must be in the range 0 -> +/- 2V.');

                      case PicoStatus.PICO_SIGGEN_WAVEFORM_SETUP_FAILED

                          error('setSigGenBuiltInSimple: Unable to setup signal generator waveform.');

                      otherwise

                          error('setSigGenBuiltInSimple: Status code: %d. Please refer to the PicoStatus.m file.', status);
                  end

              end

              clear offsetVoltageUV;
              clear peakToPeakVoltageUV;
              clear sigGenType;

          else

              error('setSigGenBuiltInSimple: Signal Generator functionality not supported by this device.');

          end
    Description: setSigGenBuiltInSimple(obj,  waveType) sets up the signal generator to produce a signal of constant frequency from a list of built-in waveforms.

      The startFrequency, offsetVoltage and peakToPeakVoltage properties must be set prior to using this function, or the default values will be used.

      The offset voltage offsetVoltage and peakToPeakVoltage properties are defined in millivolts and converted to microvolts for the underlying driver. The sum of offsetVoltageMV and pkToPkMV cannot exceed 4000 millivolts.

      This function may be used with the Test and Measurement Tool.

      Input parameters:

      obj - the object representing the Signalgenerator group.
      wavetype - the type of waveform to be generated by the oscilloscope. Use the following waveType enumerations:

      		0 - SINE
      		1 - SQUARE
      		2 - TRIANGLE
      		3 - RAMP UP
      		4 - RAMP DOWN
      		5 - SINC
      		6 - GAUSSIAN
      		7 - HALF SINE
      		8 - DC VOLTAGE
      		9 - WHITE NOISE

      Output parameters:

      status - status code returned by the driver.

      For further information, please view the Help text for the ps6000SetSigGenBuiltIn function.

  Method setSigGenOff
    MCode:
      function status = setSigGenOff(obj)
      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
          deviceObj = get(obj, 'Parent');

          offsetVoltage = 0;
          pkToPk = 0;
          waveTypeDC = evalin('base', 'ps6000Enuminfo.enPS6000WaveType.PS6000_DC_VOLTAGE');

          status = calllib('ps6000', 'ps6000SetSigGenBuiltIn', ...
                      deviceObj.DriverData.unitHandle, ...
                      offsetVoltage, pkToPk, waveTypeDC, 0, 0, ...
                      0, 0, 0, 0, 0, 0, 0, 0, 0);

          if(status ~= PicoStatus.PICO_OK)

              error('setSigGenOff: Status code: %d. Please refer to the PicoStatus.m file.', status);

          end

      	clear offsetVoltage;
          clear pkToPk;
          clear waveTypeDC;
    Description: setSigGenOff(obj) effectively turns off the signal generator by setting the output to a zero DC voltage.

      This function may be used with the Test and Measurement Tool.

      Input parameters:

      obj - the object representing the Signalgenerator group.

      Output parameters:

      status - status code returned by the driver.

Group streaming
  Description: The Streaming group contains a set of properties and functions related to the streaming data collection functionality of the device.
  Size: 1
  Mappings ChannelMap Command="streaming" Index="1"

  Property autoStop
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
          deviceObj = get(obj, 'Parent');

          % If autoStop doesn't exist, create it.
          if ( ~isfield(deviceObj.DriverData, 'autoStop') )
              deviceObj.DriverData.autoStop = 0;
          else
              propertyValue = deviceObj.DriverData.autoStop;
          end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
          deviceObj = get(obj, 'Parent');
          deviceObj.DriverData.autoStop = propertyValue;
    PermissibleType: Double enum [0.0, 1.0]
    DefaultValue: 1
    ReadOnly: never
    Description: A flag to specify if streaming data collection should stop when all of maxSamples have been taken.

      This flag should be set to 0 or 1.

  Property streamingInterval
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
          deviceObj = get(obj, 'Parent');

          % If streamingInterval doesn't exist, create it.
          if ( ~isfield(deviceObj.DriverData, 'streamingInterval') )
              deviceObj.DriverData.streamingInterval = 0;
          end

          propertyValue = deviceObj.DriverData.streamingInterval;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
          deviceObj = get(obj, 'Parent');
          deviceObj.DriverData.streamingInterval = propertyValue;
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Method autoStopped
    MCode:
      function autoStop = autoStopped(obj)
      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
          deviceObj = get(obj, 'Parent');
          unitHandle = deviceObj.DriverData.unitHandle;

          autoStop = calllib('ps6000Wrap', 'AutoStopped', unitHandle);
    Description: AutoStopped(obj) indicates if the device has stopped on collection of the number of samples specified in the call to the ps6000RunStreaming function.

      The autoStop property must have been set to 1.

      Input parameters:

      obj - the object representing the Streaming group.

      Output parameters:

      autoStop - 0 if the device has not stopped, non-zero if streaming has auto-stopped.

  Method availableData
    MCode:
      function [numSamples, startIndex] = availableData(obj)
      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
          deviceObj = get(obj, 'Parent');
          unitHandle = deviceObj.DriverData.unitHandle;

          startIndex = 0; % Initialise variable to be used as a pointer

          [numSamples, startIndex] = calllib('ps6000Wrap', 'AvailableData', ...
                                      unitHandle, startIndex);
    Description: AvailableData(obj) indicates the number of samples returned from the driver and shows the start index of the data in the buffer when collecting data in streaming mode.

      Input parameters:

      obj - the object representing the Streaming group.

      Output parameters:

      numSamples - 0, data is not yet available; Non-zero, the number of samples returned from the driver.
      startIndex - an index to the first valid sample in the buffer (when data is available).

      Note: the startIndex value is zero-based so should be incremented by 1 when used to retrieve data from the buffer.

  Method clearTriggerReady
    MCode:
      function triggerCleared = clearTriggerReady(obj)
      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
          deviceObj = get(obj, 'Parent');
          unitHandle = deviceObj.DriverData.unitHandle;

          triggerCleared = calllib('ps6000Wrap', 'ClearTriggerReady', unitHandle);
    Description: ClearTriggerReady(obj) clears the triggered and triggeredAt flags in relation to streaming mode capture.

      Input parameters:

      obj - the object representing the Streaming group.

      Output parameters:

      1 - Call successfully completed.

  Method getStreamingLatestValues
    MCode:
      function status = getStreamingLatestValues(obj)
      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
          deviceObj = get(obj, 'Parent');
          unitHandle = deviceObj.DriverData.unitHandle;

          status = calllib('ps6000Wrap', 'GetStreamingLatestValues', ...
                      unitHandle);

          if(status ~= PicoStatus.PICO_OK && status ~= PicoStatus.PICO_BUSY)

              error('ps6000GetStreamingLatestValues: Status code: %d. Please refer to the PicoStatus.m file.', status);

          end
    Description: getStreamingLatestValues(obj) facilitates communication with the underlying driver to return the next block of values to your application when capturing data in streaming mode.

      Input parameters:

      obj - the object representing the Streaming group.

      Output parameters:

      status - status code returned by the driver.

      For further information on the underlying ps6000GetStreamingLatestValues function please refer to the PicoScope 6000 Series PC Oscilloscopes Programmer's Guide.

  Method isReady
    MCode:
      function ready = isReady(obj)
      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
          deviceObj = get(obj, 'Parent');
          unitHandle = deviceObj.DriverData.unitHandle;

          ready = calllib('ps6000Wrap', 'IsReady', unitHandle);
    Description: IsReady(obj) is used to poll the driver to verify that data is ready to be received. The ps6000RunStreaming function must have been called prior to calling this function.

      Input parameters:

      obj - the object representing the Streaming group.

      Output parameters:

      ready - 0, if data is not yet available; non-zero if data is ready to be collected.

  Method isTriggerReady
    MCode:
      function [triggered, triggeredAt] = isTriggerReady(obj)
      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
          deviceObj = get(obj, 'Parent');
          unitHandle = deviceObj.DriverData.unitHandle;

          triggeredAt = 0; % Initialise value to zero for pointer.

          [triggered, triggeredAt] = calllib('ps6000Wrap', 'IsTriggerReady', ...
              unitHandle, triggeredAt);
    Description: isTriggerReady(obj) indicates whether a trigger has occurred when collecting data in streaming mode, and the location of the trigger point.

      Input parameters:

      obj - the object representing the Streaming group.

      Output parameters:

      triggered - 0, if the device has not triggered; Non-zero, if the device has been triggered.
      triggeredAt - the zero-based index of the sample in the buffer where the trigger occurred.

  Method ps6000NoOfStreamingValues
    MCode:
      function [status, noOfValues] = ps6000NoOfStreamingValues(obj)
      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
          deviceObj = get(obj, 'Parent');
          unitHandle = deviceObj.DriverData.unitHandle;

          noOfValues = 0; % Initialise value for use as pointer.

          [status, noOfValues] = calllib('ps6000', 'ps6000NoOfStreamingValues', ...
              unitHandle, noOfValues);

          if(status ~= PicoStatus.PICO_OK)

              error('ps6000NoOfStreamingValues: Status code: %d. Please refer to the PicoStatus.m file.', status);

          end
    Description: ps6000NoOfStreamingValues(obj) returns the number of samples available after data collection in streaming mode. Call this function after calling ps6000Stop.

      Input parameters:

      obj - the object representing the device.

      Output parameters:

      status - status code returned by the driver.
      noOfValues - the number of samples.

      For further information on the ps6000NoOfStreamingValues function please refer to the PicoScope 6000 Series PC Oscilloscopes Programmer's Guide.

  Method ps6000RunStreaming
    MCode:
      function [status, sampleInterval, sampleIntervalTimeUnitsStr] = ps6000RunStreaming(obj, downSampleRatio, downSampleRatioMode, overviewBufferSize)

          deviceObj = get(obj, 'Parent');
          unitHandle = deviceObj.DriverData.unitHandle;

          % Calculate sampleInterval and sampleIntervalTimeUnits according to
          % streamingInterval property set. Property is defined in seconds.

          streamingInterval = deviceObj.DriverData.streamingInterval;

          femtosecondsEnum = evalin('base', 'ps6000Enuminfo.enPS6000TimeUnits.PS6000_FS');
          picosecondsEnum = evalin('base', 'ps6000Enuminfo.enPS6000TimeUnits.PS6000_PS');
          nanosecondsEnum = evalin('base', 'ps6000Enuminfo.enPS6000TimeUnits.PS6000_NS');
          microsecondsEnum = evalin('base', 'ps6000Enuminfo.enPS6000TimeUnits.PS6000_US');
          millisecondsEnum = evalin('base', 'ps6000Enuminfo.enPS6000TimeUnits.PS6000_MS');
          secondsEnum = evalin('base', 'ps6000Enuminfo.enPS6000TimeUnits.PS6000_S');

          sampleIntervalTimeUnits = secondsEnum;

          % Match the specified interval to the correct time units
          % If an interval with component less than the minimum value for the time unit
          % is specified e.g 1.3e-3, that will be converted to 1300 microseconds.

          if(streamingInterval < 1e-12) % Femtoseconds (unlikely with USB 2.0/USB 3.0)

              sampleInterval = streamingInterval * 1e15;
              sampleIntervalTimeUnits = femtosecondsEnum;

          elseif(streamingInterval >= 1e-12 && streamingInterval < 1e-9) % Picoseconds

              if(mod(streamingInterval, 1e-12) > 0)

                  sampleInterval = streamingInterval * 1e15;
                  sampleIntervalTimeUnits = femtosecondsEnum;

              else

                  sampleInterval = streamingInterval * 1e12;
                  sampleIntervalTimeUnits = picosecondsEnum;

              end

      	elseif(streamingInterval >= 1e-9 && streamingInterval < 1e-6) % Nanoseconds

              if(mod(streamingInterval, 1e-9) > 0)

                  sampleInterval = streamingInterval * 1e12;
                  sampleIntervalTimeUnits = picosecondsEnum;

              else

                  sampleInterval = streamingInterval * 1e9;
                  sampleIntervalTimeUnits = nanosecondsEnum;

              end

      	elseif(streamingInterval >= 1e-6 && streamingInterval < 1e-3) % Microseconds

              if(mod(streamingInterval, 1e-6) > 0)

                  sampleInterval = streamingInterval * 1e9;
                  sampleIntervalTimeUnits = nanosecondsEnum;

              else

                  sampleInterval = streamingInterval * 1e6;
                  sampleIntervalTimeUnits = microsecondsEnum;

              end

          elseif(streamingInterval >= 1e-3 && streamingInterval < 1) % Milliseconds

              if(mod(streamingInterval, 1e-3) > 0)

                  sampleInterval = streamingInterval * 1e6;
                  sampleIntervalTimeUnits = microsecondsEnum;

              else

                  sampleInterval = streamingInterval * 1e3;
                  sampleIntervalTimeUnits = millisecondsEnum;

              end

          else

              % Already defined seconds

              %
              if(mod(sampleInterval, 1) > 0)

                 sampleInterval = streamingInterval * 1e3;
                 sampleIntervalTimeUnits = millisecondsEnum;

             end

          end

          autoStop = get(obj, 'autoStop');

          [status, sampleInterval] = calllib('ps6000', 'ps6000RunStreaming', ...
              unitHandle, sampleInterval, sampleIntervalTimeUnits, ...
              deviceObj.DriverData.numPreTriggerSamples, ...
              deviceObj.DriverData.numPostTriggerSamples, ...
              autoStop, downSampleRatio, downSampleRatioMode, overviewBufferSize);

          if(status == PicoStatus.PICO_OK)

              fprintf('ps6000RunStreaming:- Sample interval %d', sampleInterval);

              switch(sampleIntervalTimeUnits)

                  case femtosecondsEnum

                      sampleIntervalTimeUnitsStr = 'fs';

                  case picosecondsEnum

                      sampleIntervalTimeUnitsStr = 'ps';

                  case nanosecondsEnum

                      sampleIntervalTimeUnitsStr = 'ns';

                  case microsecondsEnum

                      sampleIntervalTimeUnitsStr = 'us';

                  case millisecondsEnum

                      sampleIntervalTimeUnitsStr = 'ms';

                  case secondsEnum

                      sampleIntervalTimeUnitsStr = 's';

                  otherwise

                      % Do nothing

              end

              fprintf('%s\n', sampleIntervalTimeUnitsStr);

              clear streamingInterval;
              clear femtosecondsEnum;
              clear picosecondsEnum;
              clear nanosecondsEnum;
              clear microsecondsEnum;
              clear millisecondsEnum;
              clear secondsEnum;

          % Check for Power connection
          elseif(status == PICO_USB3_0_DEVICE_NON_USB3_0_PORT)

              status = invoke(obj, 'ps6000ChangePowerSource', status)

          else

              error('ps6000RunStreaming: Error code %d\n', status);

          end
    Description: ps6000RunStreaming(obj, downSampleRatio, downSampleRatioMode, overviewBufferSize) function tells the oscilloscope to start collecting data in streaming mode. Use the function getStreamingLatestValues to ensure values are copied into the application buffers. 

      Input parameters:

      obj - the object representing the Streaming group.
      downSampleRatio - the downsampling factor that will be applied to the raw data.
      downSampleRatioMode -  which downsampling mode to use (an enumeration from the PS6000_RATIO_MODE range).
      overviewBufferSize - the size of the overview buffers (temporary buffers used for storing the data before returning it to the application).

      Output parameters:

      status - status code returned by the driver.
      sampleInterval - the actual time interval used.
      sampleIntervalTimeUnitsStr - a string representing the time unit for the sampling interval.

      For further information on the ps6000RunStreaming function please refer to the PicoScope 6000 Series PC Oscilloscopes Programmer's Guide.

  Method setAppAndDriverBuffers
    MCode:
      function status = setAppAndDriverBuffers(obj, channel, appBuffer, driverBuffer, bufferLength)
      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
          deviceObj = get(obj, 'Parent');
          unitHandle = deviceObj.DriverData.unitHandle;

          status = calllib('ps6000Wrap', 'setAppAndDriverBuffers', ...
              unitHandle, channel, appBuffer, driverBuffer, bufferLength);

          if(status ~= PicoStatus.PICO_OK)

              if(status == PicoStatus.PICO_INVALID_CHANNEL)

                  error('setAppAndDriverBuffers: Invalid channel specified.');

              elseif(status == PICO_INVALID_HANDLE)

                  error('setAppAndDriverBuffers: Invalid handle specified.');

              else

                  error('setAppAndDriverBuffers: status code %d.\n', status);

              end

          end
    Description: setAppAndDriverBuffers(obj, channel, appBuffer, driverBuffer, bufferLength) set the application and corresponding driver buffer in the wrapper dll.

      This function is required to allow the driver to copy the data into the application buffer being used in MATLAB when acquiring data from the PicoScope in streaming mode without aggregation.

      Input parameters:

      obj - the object representing the Streaming group.
      channel - the channel to which the buffer corresponds (an enumeration from the PS6000_CHANNEL range).
      appBuffer - a libpointer to a 1-D array of 16-bit integer values representing the application buffer.
      driverBuffer - the libpointer passed to the driver in the ps6000SetDataBuffer function call.
      bufferLength - the length of the arrays (must be equal)

      Output parameters:

      status - status code returned by the wrapper driver.

  Method setMaxMinAppAndDriverBuffers
    MCode:
      function status = setMaxMinAppAndDriverBuffers(obj, channel, appMaxBuffer, appMinBuffer, driverMaxBuffer, driverMinBuffer, bufferLength)
      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
          deviceObj = get(obj, 'Parent');
          unitHandle = deviceObj.DriverData.unitHandle;

          status = calllib('ps6000Wrap', 'setMaxMinAppAndDriverBuffers', ...
              unitHandle, channel, appMaxBuffer, appMinBuffer, ...
              driverMaxBuffer, driverMinBuffer, bufferLength);

          if(status ~= PicoStatus.PICO_OK)

              if(status == PicoStatus.PICO_INVALID_CHANNEL)

                  error('setAppAndDriverBuffers: Invalid channel specified.');

              elseif(status == PICO_INVALID_HANDLE)

                  error('setMaxMinAppAndDriverBuffers: Invalid handle specified.');

              else

                  error('setMaxMinAppAndDriverBuffers: status code %d.\n', status);

              end

          end
    Description: setAppAndDriverBuffers(obj, channel, appMaxBuffer, appMinBuffer, driverMaxBuffer, driverMinBuffer, bufferLength) set the maximum and minimum application and corresponding driver buffers in the wrapper dll.

      This function is required to allow the driver to copy the data into the maximum and minimum application buffers being used in MATLAB when acquiring data from the PicoScope in 
      streaming mode with aggregation.

      Input parameters:

      obj - the object representing the Streaming group.
      channel - the channel to which the buffer corresponds (an enumeration from the PS6000_CHANNEL range).
      appMaxBuffer - a libpointer to a 1-D array of 16-bit integer values representing the application buffer.
      appMinBuffer - a libpointer to a 1-D array of 16-bit integer values representing the application buffer.
      driverMaxBuffer - the libpointer passed to the driver for the maximum aggregated data values  in the ps6000SetDataBuffers function call.
      driverMinBuffer - the libpointer passed to the driver for the minimum aggregated data values in the ps6000SetDataBuffers function call.
      bufferLength - the length of the arrays (must be equal)

      Output parameters:

      status - status code returned by the wrapper driver.

Group trigger
  Description: The Trigger group contains a set of properties and functions related to the trigger functionality of the device.
  Size: 1
  Mappings ChannelMap Command="trigger" Index="1"

  Property autoTriggerMs
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
          deviceObj = get(obj, 'Parent');

           % If autoTriggerMs doesn't exist, create it.
          if ( ~isfield(deviceObj.DriverData, 'autoTriggerMs') )
              deviceObj.DriverData.autoTriggerMs = 0;
          end

          propertyValue = deviceObj.DriverData.autoTriggerMs;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
          deviceObj = get(obj, 'Parent');
          deviceObj.DriverData.autoTriggerMs = propertyValue;
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: The number of milliseconds the device will wait if no trigger occurs.

  Property delay
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
          deviceObj = get(obj, 'Parent');

           % If delay doesn't exist, create it.
          if ( ~isfield(deviceObj.DriverData, 'delay') )
              deviceObj.DriverData.delay = 0;
          end

          propertyValue = deviceObj.DriverData.delay;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
          deviceObj = get(obj, 'Parent');
          deviceObj.DriverData.delay = propertyValue;
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: The time, in sample periods, between the trigger occurring and the first sample being taken.

  Method ps6000IsTriggerOrPulseWidthQualifierEnabled
    MCode:
      function [status, triggerEnabled, pwqEnabled] = ps6000IsTriggerOrPulseWidthQualifierEnabled(obj)
      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
          deviceObj = get(obj, 'Parent');

          % Allocate values for variables
          triggerEnabled = 0;
          pwqEnabled = 0;

          [status, triggerEnabled, pwqEnabled] = calllib('ps6000', ...
              'ps6000IsTriggerOrPulseWidthQualifierEnabled', ...
              deviceObj.DriverData.unitHandle, triggerEnabled, pwqEnabled);

          if(status ~= PicoStatus.PICO_OK)

              error('ps6000IsTriggerOrPulseWidthQualifierEnabled: Status code: %d. Please refer to the PicoStatus.m file.', status);

          end
    Description: ps6000IsTriggerOrPulseWidthQualifierEnabled(obj) discovers whether a trigger, or pulse width triggering, is enabled.

      This function may be used with the Test and Measurement Tool.

      Input parameters:

      obj - the object representing the Trigger group.

      Output parameters:

      status - status code returned by the device.
      triggerEnabled - indicates if trigger is set.
      pwqEnabled - indicates if pulse widtrh qualifier is set.

      For further information on the ps6000IsTriggerOrPulseWidthQualifierEnabled function please refer to the PicoScope 6000 Series PC Oscilloscopes Programmer's Guide.

  Method setSimpleTrigger
    MCode:
      function status = setSimpleTrigger(obj, source, thresholdMV, direction)
      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
          deviceObj = get(obj, 'Parent');

          % Find the voltage range index
          % Set default as 5V (External trigger will use this range).
          channelRange = evalin('base', 'ps6000Enuminfo.enPS6000Range.PS6000_5V');

          % Obtain information for device
          channelSettings = deviceObj.DriverData.channelSettings;

          % Range is item 3 in the row for each channel

          switch(source)

              % Channel A
              case evalin('base', 'ps6000Enuminfo.enPS6000Channel.PS6000_CHANNEL_A')

                  channelRange = channelSettings(1,3);

              % Channel B
              case evalin('base', 'ps6000Enuminfo.enPS6000Channel.PS6000_CHANNEL_B')

                  channelRange = channelSettings(2,3);

              % Channel C
              case evalin('base', 'ps6000Enuminfo.enPS6000Channel.PS6000_CHANNEL_C')

                  channelRange = channelSettings(3,3);

              % Channel D
              case evalin('base', 'ps6000Enuminfo.enPS6000Channel.PS6000_CHANNEL_D')

                  channelRange = channelSettings(4,3);

              % External trigger
              case evalin('base', 'ps6000Enuminfo.enPS6000Channel.PS6000_TRIGGER_AUX')

                  % Auxiliary Input has +/-1V range
                  channelRange = find(PicoConstants.SCOPE_INPUT_RANGES == 1000) - 1;

              otherwise

                  error('setSimpleTrigger: Invalid channel specified');

          end

          % Obtain the range being used in milliVolts
          channelRangeMV = PicoConstants.SCOPE_INPUT_RANGES(channelRange + 1);

          % Calculate the threshold in ADC counts
          thresholdADC = mv2adc(thresholdMV, channelRangeMV, deviceObj.DriverData.maxADCValue);

          status = calllib('ps6000', 'ps6000SetSimpleTrigger', ...
                  deviceObj.DriverData.unitHandle, PicoConstants.TRUE, source, ...
                  thresholdADC, direction, deviceObj.DriverData.delay, ...
                  deviceObj.DriverData.autoTriggerMs);

          if(status ~= PicoStatus.PICO_OK)

              error('setSimpleTrigger: Status code: %d. Please refer to the PicoStatus.m file.', status);

          end
    Description: setSimpleTrigger(obj, source, thresholdMV, direction) simplifies arming the trigger. 

      It supports only the LEVEL trigger types and does not allow more than one channel to have a trigger applied to it.

      This function may be used with the Test and Measurement Tool.

      Input parameters:

      obj - the object representing the Trigger group.
      source - the channel on which to trigger.
      thresholdMV - the level at which the trigger will fire (in millivolts).
      direction - the direction in which the signal must move to cause a trigger.

      Output parameters:

      status - status code returned by the driver.

      For further information on the ps6000SetSimpleTrigger function please refer to the PicoScope 6000 Series PC Oscilloscopes Programmer's Guide.

  Method setTriggerOff
    MCode:
      function status = setTriggerOff(obj)
      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
          deviceObj = get(obj, 'Parent');

          % Set trigger to false for channel A

          source = 0; % Channel A
          thresholdADC = 0;
          direction = 0;

          status = calllib('ps6000', 'ps6000SetSimpleTrigger', ...
                  deviceObj.DriverData.unitHandle, PicoConstants.FALSE, source, ...
                  thresholdADC, direction, deviceObj.DriverData.delay, ...
                  deviceObj.DriverData.autoTriggerMs);

          %status = calllib('ps6000', 'ps6000SetTriggerChannelConditions', ...
          %    get(obj, 'unitHandle'), [], 0);

          if(status ~= PicoStatus.PICO_OK)

              error('setTriggerOff: Error code %d\n', status);

          end
    Description: setTriggerOff(obj) switches off triggering on the oscilloscope.

      This function may be with the Test and Measurement Tool.

      Input parameters:

      obj - the object representing the Trigger group.

      Output parameters:

      status - status code returned by the device.

      For further information on the underlying ps6000SetSimpleTrigger function please refer to the PicoScope 6000 Series  PC Oscilloscopes Programmer's Guide.
